WorkflowBuilder(Version=2.9.0)
GroupWorkflow IncludedWorkflows
    Disable IncludeWorkflow(Path=UclOpen.Devices:LicketySplit.bonsai, CommandsSubjectName=LickCommands, EventsSubjectName=LickEvents, LickStateSubjectName=LickState)

    GroupWorkflow RunningWheel
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEnableEncodersPayload(EnableEncoders=EncoderPort2)) => #0
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEncoderModePayload(EncoderMode=Position)) => #1
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEncoderResetPayload(EncoderReset=EncoderPort2)) => #2
        #0, #1, #2 -> Merge => #3
        ExternalizedMapping => #4
          Name(DisplayName=CommandsSubjectName, Description="The name of the Subject that carries command messages for a specific behavior device", Category=Subjects)
        #3, #4 -> MulticastSubject BehaviorCommands => #5
        ExternalizedMapping => #6
          Name(DisplayName=EventsSubjectName, Description="The name of the Subject that carries event messages from a specific behavior device", Category=Subjects)
        -> SubscribeSubject BehaviorEvents => #7
        #5, #7 -> SubscribeWhen
        #6 -> SubscribeSubject BehaviorEvents
        -> DelaySubscription(DueTime=PT0.5S)
        -> Harp.Behavior.Parse(Register=Harp.Behavior.AnalogData)
        -> MemberSelector(Selector=Encoder)
        -> Bonsai.Dsp.Difference(Order=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform ConvertSigned
          Expression: it > 32768.0 ? it - 65536.0 : (it < -32768.0 ? it + 65536.0 : it)
        -> Accumulate => #15
        ExternalizedMapping(CountsPerRev, WheelDiameterMm) => #16
        #15, #16 -> GroupWorkflow TicksToCentimeters(Description="Converts steps on a quadrature encoder to a distance in cm, published to a Subject") => #17
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value(DisplayName=CountsPerRev, Description="The number of steps recorded on the quadrature encoder in a full revolution", Category="Running Wheel")) => #1
            Source2=#0, Source3=#1 -> Divide(Operand=WorkflowProperty<System.Int16>(Value=4096)) => #2
            ExternalizedMapping(Value(DisplayName=WheelDiameterMm, Description="The diameter of the wheel, in millimetres", Category="Running Wheel"))
            -> IntProperty(Value=75)
            -> Bonsai.Scripting.Expressions.ExpressionTransform CircumferenceCm
              Expression: (it*Math.Pi)/10
            -> PropertyMapping(Value) => #6
            #2, #6 -> Multiply(Operand=FloatProperty(Value=23.561945))
            -> WorkflowOutput
        ExternalizedMapping(Name(DisplayName=WheelDistanceSubjectName, Description="The name of the Subject that carries the wheel distance in cm", Category=Subjects)) => #18
        #17, #18 -> PublishSubject WheelDistanceCm

    IncludeWorkflow(Path=UclOpen.Devices:BehaviorBoard.Timestamps.bonsai, EventsSubjectName=BehaviorEvents, CommandsSubjectName=BehaviorCommands)

    Disable IncludeWorkflow
      Path=UclOpen.Devices:DeviceBehaviorBoard.RunningWheel.bonsai
      CommandsSubjectName=BehaviorCommands
      EventsSubjectName=BehaviorEvents
      CountsPerRev=4096
      WheelDiameterMm=170
      WheelDistanceSubjectName=WheelDistanceCm

    IncludeWorkflow
      Path=UclOpen.Devices:BehaviorBoard.BehaviorBoard.bonsai
      CommandsSubjectName=BehaviorCommands
      PortName=COM11
      DumpRegisters=true
      Heartbeat=Disabled
      EventsSubjectName=BehaviorEvents

    IncludeWorkflow
      Path=UclOpen.Devices:BehaviorBoard.CameraTriggerController.bonsai
      TriggerFrequency=50
      BehaviorCommandsSubjectName=BehaviorCommands
      BehaviorEventsSubjectName=BehaviorEvents
      CameraTriggerEventsSubjectName=CameraTriggerEvents

    GroupWorkflow LicketySplits
        IncludeWorkflow
          Path=UclOpen.Devices:LicketySplit.bonsai
          CommandsSubjectName=LickCommandsLeft
          PortName=COM15
          DumpRegisters=true
          Heartbeat=Disabled
          EventsSubjectName=LickEventsLeft
          Channel0TriggerThreshold=255
          Channel0UntriggerThreshold=255
          LickStateSubjectName=LickStateLeft

        Disable IncludeWorkflow
          Path=UclOpen.Devices:LicketySplit.bonsai
          CommandsSubjectName=LickCommandsRight
          PortName=COM13
          DumpRegisters=true
          Heartbeat=Disabled
          EventsSubjectName=LickEventsRight
          Channel0TriggerThreshold=0
          Channel0UntriggerThreshold=0
          LickStateSubjectName=LickStateRight

    GroupWorkflow StepperDriver
        GroupWorkflow InitializeStepperDrivers
            BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriver1Commands => #0
            ExternalizedMapping(PortName(DisplayName=StepperDriver1PortName)) => #1
            #0, #1 -> Harp.StepperDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM14)
            -> BehaviorSubject StepperDriver1Events

            BehaviorSubject<Bonsai.Harp.HarpMessage> StepperDriver2Commands => #4
            ExternalizedMapping(PortName(DisplayName=StepperDriver2PortName)) => #5
            #4, #5 -> Harp.StepperDriver.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COM12)
            -> BehaviorSubject StepperDriver2Events

        GroupWorkflow ReadSwitchStates
            SubscribeSubject StepperDriver1Events
            -> Harp.StepperDriver.Parse(Register=Harp.StepperDriver.DigitalInputState)
            -> UnpackSwitchTriggers => #2
            -> Index(Operand=IntProperty(Value=0))
            -> BehaviorSubject _Motor0_switchState
            #2 -> Index(Operand=IntProperty(Value=1))
            -> BehaviorSubject _Motor1_switchState
            #2 -> Index(Operand=IntProperty(Value=2))
            -> BehaviorSubject _Motor2_switchState

            SubscribeSubject StepperDriver2Events
            -> Harp.StepperDriver.Parse(Register=Harp.StepperDriver.DigitalInputState)
            -> UnpackSwitchTriggers => #11
            -> Index(Operand=IntProperty(Value=0))
            -> BehaviorSubject _Motor3_switchState
            #11 -> Index(Operand=IntProperty(Value=1))
            -> BehaviorSubject _Motor4_switchState

        GroupWorkflow InitialiseStepperDriverSettings
            SubscribeSubject StepperDriver1Events
            -> Take(Count=20)
            -> TakeLast(Count=1)
            -> Delay(DueTime=PT0.1S)
            -> Unit
            -> Defer "Initialize StepperDriver1"
                WorkflowInput Source1

                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInterlockEnabledPayload(InterlockEnabled=Open)) => #1
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDriverPayload(EnableDriver="Motor0 Motor1 Motor2")) => #2
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MaximumRunCurrentPayload(Motor0MaximumRunCurrent=0.5)) => #3
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MaximumRunCurrentPayload(Motor1MaximumRunCurrent=0.5)) => #4
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2MaximumRunCurrentPayload(Motor2MaximumRunCurrent=0.5)) => #5
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MicrostepResolutionPayload(Motor0MicrostepResolution=Microstep8)) => #6
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MicrostepResolutionPayload(Motor1MicrostepResolution=Microstep8)) => #7
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2MicrostepResolutionPayload(Motor2MicrostepResolution=Microstep8)) => #8
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableEncodersPayload(EnableEncoders="Encoder0 Encoder1 Encoder2")) => #9
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateResetEncodersPayload(ResetEncoders="Encoder0 Encoder1 Encoder2")) => #10
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderModePayload(EncoderMode=Position)) => #11
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderSamplingRatePayload(EncoderSamplingRate=Rate500Hz)) => #12
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateAccumulatedStepsSamplingRatePayload(AccumulatedStepsSamplingRate=Rate100Hz)) => #13
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDigitalInputsPayload(EnableDigitalInputs="Input0 Input1 Input2")) => #14
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput0OpModePayload(Input0OpMode=StopMotor0OnFalling)) => #15
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput1OpModePayload(Input1OpMode=StopMotor1OnFalling)) => #16
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput2OpModePayload(Input2OpMode=StopMotor2OnFalling)) => #17
                IntProperty(Value=25) => #18
                -> PropertyMapping(Motor0StepInterval)
                -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0StepIntervalPayload(Motor0StepInterval=200)) => #20
                #18 -> PropertyMapping(Motor1StepInterval)
                -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1StepIntervalPayload(Motor1StepInterval=200)) => #22
                #18 -> PropertyMapping(Motor2StepInterval)
                -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor2StepIntervalPayload(Motor2StepInterval=200)) => #24
                #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #15, #16, #17, #20, #22, #24 -> Concat
                -> MulticastSubject StepperDriver1Commands
                -> WorkflowOutput
            -> Delay(DueTime=PT0.1S) => #6
            SubscribeSubject StepperDriver2Events
            -> Take(Count=20)
            -> TakeLast(Count=1)
            -> Delay(DueTime=PT0.2S)
            -> Unit
            -> Defer "Initialize StepperDriver2"
                WorkflowInput Source1

                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInterlockEnabledPayload(InterlockEnabled=Open)) => #1
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDriverPayload(EnableDriver="Motor0 Motor1")) => #2
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MaximumRunCurrentPayload(Motor0MaximumRunCurrent=0.5)) => #3
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MaximumRunCurrentPayload(Motor1MaximumRunCurrent=0.5)) => #4
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0MicrostepResolutionPayload(Motor0MicrostepResolution=Microstep8)) => #5
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1MicrostepResolutionPayload(Motor1MicrostepResolution=Microstep8)) => #6
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableEncodersPayload(EnableEncoders="Encoder0 Encoder1")) => #7
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateResetEncodersPayload(ResetEncoders="Encoder0 Encoder1")) => #8
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderModePayload(EncoderMode=Position)) => #9
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEncoderSamplingRatePayload(EncoderSamplingRate=Rate500Hz)) => #10
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateAccumulatedStepsSamplingRatePayload(AccumulatedStepsSamplingRate=Rate100Hz)) => #11
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateEnableDigitalInputsPayload(EnableDigitalInputs="Input0 Input1")) => #12
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput0OpModePayload(Input0OpMode=StopMotor0OnFalling)) => #13
                Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateInput1OpModePayload(Input1OpMode=StopMotor1OnFalling)) => #14
                IntProperty(Value=25) => #15
                -> PropertyMapping(Motor0StepInterval)
                -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor0StepIntervalPayload(Motor0StepInterval=200)) => #17
                #15 -> PropertyMapping(Motor1StepInterval)
                -> Harp.StepperDriver.CreateMessage(MessageType=Write, Payload=Harp.StepperDriver.CreateMotor1StepIntervalPayload(Motor1StepInterval=200)) => #19
                #1, #2, #3, #4, #5, #6, #7, #8, #9, #10, #11, #12, #13, #14, #17, #19 -> Concat
                -> MulticastSubject StepperDriver2Commands
                -> WorkflowOutput
            -> Delay(DueTime=PT0.1S) => #13
            #6, #13 -> Zip
            -> BooleanProperty(Value=true)
            -> BehaviorSubject StepperDriversInitialized => #16
            Annotation "Ensure I get the initial states"(Text="") => #17
            #16, #17 -> Harp.StepperDriver.CreateMessage(MessageType=Read, Payload=Harp.StepperDriver.CreateDigitalInputStatePayload(DigitalInputState=None)) => #18
            -> MulticastSubject StepperDriver1Commands
            #18 -> MulticastSubject StepperDriver2Commands

        GroupWorkflow ZEROMotors
            IncludeWorkflow => #0
              Path=Extensions\ZEROingMotors.bonsai
              SubjectName_switchState=_Motor0_switchState
              MotorID=0
              SubjectName_StepperDriver=StepperDriver1Commands
              SubjectName_switchState_again=_Motor0_switchState
            IncludeWorkflow => #1
              Path=Extensions\ZEROingMotors.bonsai
              SubjectName_switchState=_Motor1_switchState
              MotorID=1
              SubjectName_StepperDriver=StepperDriver1Commands
              SubjectName_switchState_again=_Motor1_switchState
            IncludeWorkflow => #2
              Path=Extensions\ZEROingMotors.bonsai
              SubjectName_switchState=_Motor2_switchState
              MotorID=2
              SubjectName_StepperDriver=StepperDriver1Commands
              SubjectName_switchState_again=_Motor2_switchState
            IncludeWorkflow => #3
              Path=Extensions\ZEROingMotors.bonsai
              SubjectName_switchState=_Motor3_switchState
              MotorID=0
              SubjectName_StepperDriver=StepperDriver2Commands
              SubjectName_switchState_again=_Motor3_switchState
            IncludeWorkflow => #4
              Path=Extensions\ZEROingMotors.bonsai
              SubjectName_switchState=_Motor4_switchState
              MotorID=1
              SubjectName_StepperDriver=StepperDriver2Commands
              SubjectName_switchState_again=_Motor4_switchState
            #0, #1, #2, #3, #4 -> Zip
            -> WorkflowOutput

        GroupWorkflow MoveMotors
            SubscribeSubject StepperPositionCommand
            -> IncludeWorkflow(Path=Extensions\MoveStepperMotors.bonsai)

    IncludeWorkflow
      Path=UclOpen.Devices:BehaviorBoard.PulseController.bonsai
      BehaviorCommandsSubjectName=BehaviorCommands
      OutputPulseEnable="DO1 DO2 DO3"
      PulseDO1=100
      PulseDO2=100
      PulseDO3=100
      BehaviorEventsSubjectName=BehaviorEvents
      TriggerPulseSubjectName=TriggerValve

    BooleanProperty(Value=true)
    -> Delay(DueTime=PT1S)
    -> MulticastSubject StartCameras

Disable GroupWorkflow GUI
    Bonsai.Gui.LabelBuilder Session_Animal(Enabled=true, Visible=true, Text=Session_Animal)
    -> VisualizerMapping => #1
    SubscribeSubject AnimalAndSessionID
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.TextBoxBuilder Session_Animal(Enabled=true, Visible=true, Text=1_Algernon, Multiline=false)
    -> VisualizerMapping => #6
    Bonsai.Gui.LabelBuilder ShapingStage(Enabled=true, Visible=true, Text=ShapingStage)
    -> VisualizerMapping => #8
    SubscribeSubject ShapingStage
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.TextBoxBuilder ShapingStage(Enabled=true, Visible=true, Text=1, Multiline=false)
    -> VisualizerMapping => #13
    Bonsai.Gui.LabelBuilder TrialNumber(Enabled=true, Visible=true, Text=TrialNumber)
    -> VisualizerMapping => #15
    SubscribeSubject TrialNumber
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.TextBoxBuilder TrialNumber(Enabled=true, Visible=true, Text=3, Multiline=false)
    -> VisualizerMapping => #20
    Bonsai.Gui.LabelBuilder LickCount(Enabled=true, Visible=true, Text=LickCount)
    -> VisualizerMapping => #22
    Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.1S) => #23
    SubscribeSubject LickCount => #24
    #23, #24 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.TextBoxBuilder LickCount(Enabled=true, Visible=true, Text=0, Multiline=false)
    -> VisualizerMapping => #30
    Bonsai.Gui.LabelBuilder MouseVirtualPos(Enabled=true, Visible=true, Text=MouseVirtualPos)
    -> VisualizerMapping => #32
    Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.1S) => #33
    SubscribeSubject MouseVirtualPosition => #34
    #33, #34 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Disable BufferCount(Count=1, Skip=100)
    -> Disable Merge
    -> Format(Format={0:0.00}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.TextBoxBuilder MouseVirtualPos(Enabled=true, Visible=true, Text=0.00, Multiline=false)
    -> VisualizerMapping => #42
    Bonsai.Gui.LabelBuilder CurrentAudFrequency(Enabled=true, Visible=true, Text=CurrentAudFrequency)
    -> VisualizerMapping => #44
    Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.1S) => #45
    SubscribeSubject CurrFreq => #46
    #45, #46 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.TextBoxBuilder CurrentAudFrequency(Enabled=true, Visible=true, Text=0, Multiline=false)
    -> VisualizerMapping => #52
    Bonsai.Gui.LabelBuilder RewardFreqFloor(Enabled=true, Visible=true, Text=RewardFreqFloor)
    -> VisualizerMapping => #54
    SubscribeSubject RewardFloorFreq
    -> Format(Format={0}, Selector=it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.TextBoxBuilder RewardFreqFloor(Enabled=true, Visible=true, Text=18000, Multiline=false)
    -> VisualizerMapping => #59
    #1, #6, #8, #13, #15, #20, #22, #30, #32, #42, #44, #52, #54, #59 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=8, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #63
    Bonsai.Gui.ToggleButtonBuilder Start(Enabled=true, Visible=true, Text=Start, Checked=false)
    -> BehaviorSubject StartSession
    -> VisualizerMapping => #66
    SubscribeSubject Frame1ForGUI
    -> Bonsai.Vision.Flip(Mode=Both)
    -> VisualizerMapping => #69
    SubscribeSubject Frame2ForGUI
    -> Bonsai.Vision.Flip(Mode=Both)
    -> VisualizerMapping => #72
    SubscribeSubject Frame3ForGUI
    -> Bonsai.Vision.Flip(Mode=Both)
    -> VisualizerMapping => #75
    SubscribeSubject WheelDistanceCm
    -> BufferCount(Count=1, Skip=100)
    -> Merge => #78
    -> Skip(Count=1) => #79
    #79, #78 -> Zip
    -> Subtract
    -> Multiply(Operand=DoubleProperty(Value=1))
    -> VisualizerMapping => #83
    #69, #72, #75, #83 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=3
      RowCount=2
      ColumnStyles=""
      RowStyles=""
      CellSpans(CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=3, RowSpan=1))
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text=Cameras)
    -> VisualizerMapping => #87
    Bonsai.Gui.LabelBuilder Left(Enabled=true, Visible=true, Text=Left)
    -> VisualizerMapping => #89
    Bonsai.Gui.LabelBuilder Right(Enabled=true, Visible=true, Text=Right)
    -> VisualizerMapping => #91
    Annotation "Motor1 UP"(Text="Motor1 UP")
    -> Bonsai.Gui.ButtonBuilder "Left UP"(Enabled=true, Visible=true, Text=↑)
    -> PublishSubject Motor4_UP
    -> VisualizerMapping => #95
    SubscribeSubject StepperPosition_BothIn
    -> Format(Format="{0},{1},{2},{3},{4};", Selector="Item1,Item2,Item3,Item4,Item5")
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="1000,1000,2000,2000,500;")
    -> VisualizerMapping => #100
    Bonsai.Gui.ButtonBuilder "Right UP"(Enabled=true, Visible=true, Text=↑)
    -> PublishSubject Motor5_UP
    -> VisualizerMapping => #103
    Annotation "Motor1 DOWN"(Text="Motor1 DOWN")
    -> Bonsai.Gui.ButtonBuilder "Left DOWN"(Enabled=true, Visible=true, Text=↓)
    -> PublishSubject Motor4_DOWN
    -> VisualizerMapping => #107
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #109
    Bonsai.Gui.ButtonBuilder "Right DOWN"(Enabled=true, Visible=true, Text=↓)
    -> PublishSubject Motor5_DOWN
    -> VisualizerMapping => #112
    Bonsai.Gui.ButtonBuilder "Left FRONT"(Enabled=true, Visible=true, Text=↙)
    -> PublishSubject Motor2_UP
    -> VisualizerMapping => #115
    Bonsai.Gui.ButtonBuilder "Left BACK"(Enabled=true, Visible=true, Text=↗)
    -> PublishSubject Motor2_DOWN
    -> VisualizerMapping => #118
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #120
    Bonsai.Gui.ButtonBuilder "Right BACK"(Enabled=true, Visible=true, Text=↖)
    -> PublishSubject Motor3_DOWN
    -> VisualizerMapping => #123
    Bonsai.Gui.ButtonBuilder "Right FRONT"(Enabled=true, Visible=true, Text=↘)
    -> PublishSubject Motor3_UP
    -> VisualizerMapping => #126
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #128
    Bonsai.Gui.ButtonBuilder "Base LEFT"(Enabled=true, Visible=true, Text=←)
    -> PublishSubject Motor1_UP
    -> VisualizerMapping => #131
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #133
    Bonsai.Gui.ButtonBuilder "Base RIGHT"(Enabled=true, Visible=true, Text=→)
    -> PublishSubject Motor1_DOWN
    -> VisualizerMapping => #136
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #138
    Bonsai.Gui.ButtonBuilder HOME(Enabled=true, Visible=true, Text="ZERO (Home)")
    -> PublishSubject GUICallbackStepperHOME
    -> VisualizerMapping => #141
    Bonsai.Gui.ButtonBuilder IN(Enabled=true, Visible=true, Text=IN)
    -> PublishSubject GUICallbackStepperIN
    -> VisualizerMapping => #144
    Bonsai.Gui.ButtonBuilder OUT(Enabled=true, Visible=true, Text=OUT)
    -> PublishSubject GUICallbackStepperOUT
    -> VisualizerMapping => #147
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #149
    Bonsai.Gui.LabelBuilder StepSize(Enabled=true, Visible=true, Text=StepSize)
    -> VisualizerMapping => #151
    Bonsai.Gui.LabelBuilder BLANK(Enabled=true, Visible=true, Text="")
    -> VisualizerMapping => #153
    SubscribeSubject StepperStepSize
    -> Take(Count=1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToString(it)
    -> PropertyMapping(Text)
    -> Bonsai.Gui.TextBoxBuilder StepSize(Enabled=true, Visible=true, Text=30, Multiline=false) => #158
    -> VisualizerMapping => #159
    #89, #91, #95, #100, #103, #107, #109, #112, #115, #118, #120, #123, #126, #128, #131, #133, #136, #138, #141, #144, #147, #149, #151, #153, #159 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=5
      RowCount=7
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=4, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=4, RowSpan=1)
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="Spout Position")
    -> VisualizerMapping => #163
    Bonsai.Gui.LabelBuilder Left(Enabled=true, Visible=true, Text="Left Valve")
    -> VisualizerMapping => #165
    Bonsai.Gui.LabelBuilder Right(Enabled=true, Visible=true, Text="Right Valve")
    -> VisualizerMapping => #167
    Bonsai.Gui.ButtonBuilder "LEFT FLUSH"(Enabled=true, Visible=true, Text="LEFT FLUSH")
    -> PublishSubject GUI_Callback_Left_flush
    -> VisualizerMapping => #170
    Bonsai.Gui.ButtonBuilder "RIGHT FLUSH"(Enabled=true, Visible=true, Text="RIGHT FLUSH")
    -> PublishSubject GUI_Callback_Right_flush
    -> VisualizerMapping => #173
    #165, #167, #170, #173 -> Bonsai.Gui.TableLayoutPanelBuilder(Enabled=true, Visible=true, ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> VisualizerMapping
    -> Bonsai.Gui.GroupBoxBuilder(Enabled=true, Visible=true, Text="Spout Position")
    -> VisualizerMapping => #177
    #63, #66, #87, #163, #177 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=5
      RowCount=4
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=1, RowSpan=2)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=3, RowSpan=4)
        CellSpan(ColumnSpan=1, RowSpan=3)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
    -> Bonsai.Design.VisualizerWindow(Text="AV Dome Task", Visible=true, Location(X=100, Y=100), Size(Width=1500, Height=600), WindowState=Normal)
    #158 -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToInt32(it)
    -> MulticastSubject StepperStepSize

    IntProperty(Value=30)
    -> BehaviorSubject StepperStepSize

    SubscribeSubject FrameEvents1
    -> MemberSelector(Selector=Value.Image)
    -> BehaviorSubject Frame1ForGUI

    SubscribeSubject FrameEvents2
    -> MemberSelector(Selector=Value.Image)
    -> BehaviorSubject Frame2ForGUI

    SubscribeSubject FrameEvents3
    -> MemberSelector(Selector=Value.Image)
    -> BehaviorSubject Frame3ForGUI

Disable GroupWorkflow "GUI Callbacks"
    GroupWorkflow ValveGUICallbacks(Description=ValveGUICallbacks)
        SubscribeSubject GUI_Callback_Left_flush
        -> IntProperty(Value=1) => #1
        SubscribeSubject GUI_Callback_Right_flush
        -> IntProperty(Value=2) => #3
        #1, #3 -> Merge
        -> MulticastSubject TriggerValve
        -> WorkflowOutput

    GroupWorkflow StepperMotorGUICallbacks(Description=StepperMotorGUICallbacks)
        Annotation "Update Motor IN position data"(Text="Update Motor IN position data")

        GroupWorkflow "Internal Position Update"(Description="Internal Position Update")
            Annotation Motor1_IN_position(Text=Motor1_IN_position)
            -> SubscribeSubject Motor1_Position => #1
            Annotation Motor2_IN_position(Text=Motor2_IN_position)
            -> SubscribeSubject Motor2_Position => #3
            Annotation Motor3_IN_position(Text=Motor3_IN_position)
            -> SubscribeSubject Motor3_Position => #5
            Annotation Motor4_IN_position(Text=Motor4_IN_position)
            -> SubscribeSubject Motor4_Position => #7
            Annotation Motor5_IN_position(Text=Motor5_IN_position)
            -> SubscribeSubject Motor5_Position => #9
            Annotation "Grab all latest inputs"(Text="Grab all latest inputs") => #10
            #1, #3, #5, #7, #9, #10 -> CombineLatest => #11
            Annotation "Sample when any input emits"(Text="Sample when any input emits") => #12
            #1, #3, #5, #7, #9, #12 -> Merge => #13
            #11, #13 -> Sample
            -> Disable Format(Format="{0},{1},{2},{3},{4};", Selector="Item1,Item2,Item3,Item4,Item5") => #15
            Annotation "Store IN position"(Text="Store IN position") => #16
            #15, #16 -> MulticastSubject StepperPosition_BothIn => #17
            Annotation "Sends command with every update"(Text="Sends command with every update") => #18
            #17, #18 -> MulticastSubject StepperPositionCommand => #19
            GroupWorkflow "Init Positions"(Description="Init Positions") => #20
                Annotation Motor1_IN_position(Text=Motor1_IN_position)
                -> IntProperty(Value=1000)
                -> BehaviorSubject Motor1_Position => #2
                Annotation Motor2_IN_position(Text=Motor2_IN_position)
                -> IntProperty(Value=1000)
                -> BehaviorSubject Motor2_Position => #5
                Annotation Motor3_IN_position(Text=Motor3_IN_position)
                -> IntProperty(Value=2000)
                -> BehaviorSubject Motor3_Position => #8
                Annotation Motor4_IN_position(Text=Motor4_IN_position)
                -> IntProperty(Value=2000)
                -> BehaviorSubject Motor4_Position => #11
                Annotation Motor5_IN_position(Text=Motor5_IN_position)
                -> IntProperty(Value=500)
                -> BehaviorSubject Motor5_Position => #14
                #2, #5, #8, #11, #14 -> Merge
                -> WorkflowOutput
            #19, #20 -> SubscribeWhen
            #5 -> Subtract(Operand=IntProperty(Value=1000)) => #22
            #7 -> Subtract(Operand=IntProperty(Value=1000)) => #23
            #1, #3, #22, #23, #9 -> CombineLatest => #24
            #24, #13 -> Sample
            -> Disable Format(Format="{0},{1},{2},{3},{4};", Selector="Item1,Item2,Item3,Item4,Item5")
            -> MulticastSubject StepperPosition_BothOut

        Annotation "ZERO, IN, OUT commands"(Text="ZERO, IN, OUT commands")

        GroupWorkflow "Position Callbacks"(Description="Position Callbacks. Overall: ZERO, IN, OUT")
            SubscribeSubject GUICallbackStepperHOME => #0
            Annotation HomePosition(Text=HomePosition)
            -> SubscribeSubject StepperPosition_HOME => #2
            #0, #2 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

            SubscribeSubject GUICallbackStepperIN => #6
            Annotation INPosition(Text=INPosition)
            -> SubscribeSubject StepperPosition_BothIn => #8
            #6, #8 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

            SubscribeSubject GUICallbackStepperOUT => #12
            Annotation OUTPosition(Text=OUTPosition)
            -> SubscribeSubject StepperPosition_BothOut => #14
            #12, #14 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject StepperPositionCommand

        Annotation "Individual Motor Callbacks"(Text="Individual Motor Callbacks")

        SubscribeSubject StepperStepSize => #5
        -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor1
            SubscribeSubject Motor1_UP => #0
            SubscribeSubject Motor1_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=30) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor1_Position
            SubscribeSubject Motor1_DOWN => #9
            SubscribeSubject Motor1_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=30) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor1_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor2
            SubscribeSubject Motor2_UP => #0
            SubscribeSubject Motor2_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=30) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor2_Position
            SubscribeSubject Motor2_DOWN => #9
            SubscribeSubject Motor2_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=30) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor2_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor3
            SubscribeSubject Motor3_UP => #0
            SubscribeSubject Motor3_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=30) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor3_Position
            SubscribeSubject Motor3_DOWN => #9
            SubscribeSubject Motor3_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=30) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor3_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor4
            SubscribeSubject Motor4_UP => #0
            SubscribeSubject Motor4_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=30) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor4_Position
            SubscribeSubject Motor4_DOWN => #9
            SubscribeSubject Motor4_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=30) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor4_Position
        #5 -> PropertyMapping(StepSize)
        -> GroupWorkflow Motor5
            SubscribeSubject Motor5_UP => #0
            SubscribeSubject Motor5_Position => #1
            #0, #1 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #3
            ExternalizedMapping(Value(DisplayName=StepSize)) => #4
            -> IntProperty(Value=30) => #5
            #3, #5 -> WithLatestFrom
            -> Add
            -> MulticastSubject Motor5_Position
            SubscribeSubject Motor5_DOWN => #9
            SubscribeSubject Motor5_Position => #10
            #9, #10 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #12
            #4 -> IntProperty(Value=30) => #13
            #12, #13 -> WithLatestFrom
            -> Subtract
            -> MulticastSubject Motor5_Position

Disable GroupWorkflow Cameras
    IncludeWorkflow
      Path=UclOpen.Devices:TriggeredSpinnaker.bonsai
      ExposureTime=19000
      Gain=0
      Binning=1
      SerialNumber=25366326
      ColorProcessing=Default
      CameraTriggerEventsSubjectName=CameraTriggerEvents
      FrameEventsSubjectName=FrameEvents1

    IncludeWorkflow
      Path=UclOpen.Devices:TriggeredSpinnaker.bonsai
      ExposureTime=19000
      Gain=0
      Binning=1
      SerialNumber=25366328
      ColorProcessing=Default
      CameraTriggerEventsSubjectName=CameraTriggerEvents
      FrameEventsSubjectName=FrameEvents2

    IncludeWorkflow
      Path=UclOpen.Devices:TriggeredSpinnaker.bonsai
      ExposureTime=19000
      Gain=0
      Binning=1
      SerialNumber=25366318
      ColorProcessing=Default
      CameraTriggerEventsSubjectName=CameraTriggerEvents
      FrameEventsSubjectName=FrameEvents3

GroupWorkflow Params(Description=Params)
    ExternalizedMapping(Path(DisplayName=TaskPath))
    -> Bonsai.IO.ReadAllText(Path=C:\Users\CoenLabUsers\Desktop\auditory-vr-corridor\auditory-vr-corridor\session-schemas\current-session\UclOpenAuditoryVrCorridorTaskLogic.json)
    -> UclOpenAuditoryVrCorridorDataSchema.DeserializeFromJson(Type=TypeMapping<UclOpenAuditoryVrCorridorDataSchema.UclOpenAuditoryVrCorridorTaskLogic>)
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskParams

    Disable ExternalizedMapping(Value(DisplayName=Modality))
    -> Disable StringProperty(Value=AV)
    -> Disable BehaviorSubject Modality

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=Modality)
    -> BehaviorSubject Modality

    GroupWorkflow InitVars => #11
        GroupWorkflow VisParams
            SubscribeSubject TaskParams => #0
            -> MemberSelector(Selector=StartFreq) => #1
            #0 -> MemberSelector(Selector=EndFreq) => #2
            #1, #2 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform Start-End-Multiple => #4
              Expression: it.item2/it.Item1
            SubscribeSubject StartFreqV => #5
            SubscribeSubject EndFreqV => #6
            #5, #6 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform Start-End-Multiple => #8
              Expression: it.item2/it.Item1
            #4, #8 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform Aud-Over-Vis-Multiple
              Expression: it.item1/it.Item2
            -> BehaviorSubject VisToAudMultiple

            Bonsai.Shaders.CreateWindow
              Width=640
              Height=480
              VSync=On
              SwapSync=false
              ClearColor=Black
              ClearMask="DepthBufferBit ColorBufferBit"
              CursorVisible=true
              Location=nil
              WindowBorder=Resizable
              WindowState=Normal
              DisplayDevice=Primary
              TargetRenderFrequency=60
              TargetUpdateFrequency=nil
              RenderState=""
              GraphicsMode
                ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
                Depth=16
                Stencil=0
                Samples=0
                AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
                Buffers=2
                Stereo=false
            -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
            -> Bonsai.Resources.LoadResources

            Bonsai.Shaders.RenderFrame
            -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai)
            -> IncludeWorkflow
              Path=BonVision:Primitives.DrawQuad.bonsai
              ExtentX=2
              ExtentY=2
              LocationX=0
              LocationY=0
              Layer=0
              Angle=90
              ColorR=0.5
              ColorG=0.5
              ColorB=0.5
              ColorA=1

            DoubleProperty(Value=4)
            -> BehaviorSubject StartFreqV

            DoubleProperty(Value=16)
            -> BehaviorSubject EndFreqV

            DoubleProperty(Value=0)
            -> BehaviorSubject CurrPhase

            DoubleProperty(Value=0)
            -> BehaviorSubject CurrFreqV

            DoubleProperty(Value=1)
            -> BehaviorSubject Opacity

            DoubleProperty(Value=1)
            -> BehaviorSubject CurrOpacity

        GroupWorkflow InitVars
            BehaviorSubject<System.TimeSpan> InterTrialInterval
            BehaviorSubject<System.Double> AudAmplitude
            BehaviorSubject<System.Int64> BeepTimer
            BehaviorSubject<System.Double> TrackLength
            BehaviorSubject<System.Double> RewardFloorFreq
            BehaviorSubject<System.Double> RewardCeilFreq
            BehaviorSubject<System.Double> TrialEndFreq
            BehaviorSubject<System.Boolean> TrialEnded
            Disable BehaviorSubject<OpenCV.Net.Mat> Buffer

            GroupWorkflow StepperDriverParams
                Annotation StepperPosition_BothIn(Text=StepperPosition_BothIn)
                -> IntProperty(Value=6000) => #1
                IntProperty(Value=4000) => #2
                IntProperty(Value=6000) => #3
                IntProperty(Value=9000) => #4
                IntProperty(Value=9500) => #5
                #1, #2, #3, #4, #5 -> Zip => #6
                -> BehaviorSubject StepperPosition_BothIn
                Annotation StepperPosition_BothOut(Text=StepperPosition_BothOut) => #8
                #6, #8 -> BehaviorSubject StepperPosition_BothOut

                IntProperty(Value=0) => #10
                IntProperty(Value=0) => #11
                IntProperty(Value=0) => #12
                IntProperty(Value=0) => #13
                IntProperty(Value=0) => #14
                #10, #11, #12, #13, #14 -> Zip => #15
                -> Delay(DueTime=PT3S)
                -> BehaviorSubject StepperPositionCommand
                #15 -> BehaviorSubject StepperPosition_HOME

            SubscribeSubject TaskParams => #10
            -> MemberSelector(Selector=Amplitude) => #11
            Annotation(Text="Rescales Amplitude to 1 or 0 Depending on if AudioStimActive is True or False")
            -> SubscribeSubject AudioStimActive
            -> PropertyMapping(Value) => #14
            #11, #14 -> Multiply(Operand=DoubleProperty(Value=1))
            -> MulticastSubject AudAmplitude
            -> PropertyMapping(RangeMax) => #17
            Bonsai.Dsp.MatrixReader(Path=./waveforms/all_waveforms.bin, Offset=0, SampleRate=50000, ChannelCount=1, BufferLength=2500, Depth=F32, Layout=RowMajor) => #18
            #17, #18 -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=0.5, RescaleType=Linear) => #19
            #10 -> MemberSelector(Selector=NFreqBins)
            -> PropertyMapping(Count) => #21
            #19, #21 -> Take(Count=100)
            -> Bonsai.Dsp.Tile(RowTiles=32, ColumnTiles=1)
            -> ToList
            -> AsyncSubject WaveformDict

            IntProperty(Value=0) => #26
            -> BehaviorSubject LickCount
            #26 -> BehaviorSubject TrialNumber
            #26 -> BehaviorSubject CurrFreq

            BooleanProperty(Value=false)
            -> BehaviorSubject WasRewarded

            DoubleProperty(Value=0)
            -> BehaviorSubject StartTime

            DoubleProperty(Value=0)
            -> BehaviorSubject TrialStartWheelDistance

            Disable DoubleProperty(Value=0)
            -> Disable BehaviorSubject CurrAmp

            DoubleProperty(Value=1000)
            -> BehaviorSubject DriftBeepsTillEnd

            DoubleProperty(Value=0)
            -> BehaviorSubject TrialDistFloor
    SubscribeSubject Modality => #12
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToDouble((it == "A" || it == "AV"))
    -> BehaviorSubject AudioStimActive => #14
    #12 -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Convert.ToDouble((it == "V" || it == "AV"))
    -> BehaviorSubject VisualStimActive => #16
    #14, #16 -> Zip => #17
    #11, #17 -> SubscribeWhen

    SubscribeSubject TaskParams
    -> MemberSelector(Selector=ShapingStage)
    -> BehaviorSubject ShapingStage

    Disable ExternalizedMapping(Value(DisplayName=ShapingStage))
    -> Disable IntProperty(Value=6)
    -> Disable BehaviorSubject ShapingStage

    Disable GroupWorkflow Old
        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage1.Floor)
        -> Disable BehaviorSubject Stage1FloorFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage1.Ceiling)
        -> Disable BehaviorSubject Stage1CeilFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage2.Floor)
        -> Disable BehaviorSubject Stage2FloorFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage2.Ceiling)
        -> Disable BehaviorSubject Stage2CeilFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage3.Floor)
        -> Disable BehaviorSubject Stage3FloorFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage3.Ceiling)
        -> Disable BehaviorSubject Stage3CeilFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=Amplitude)
        -> Disable BehaviorSubject Amplitude

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=Punishment.TimeoutSec)
        -> Disable BehaviorSubject PunishmentTimeoutSec

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage4.Floor)
        -> Disable BehaviorSubject Stage4FloorFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage4.Ceiling)
        -> Disable BehaviorSubject Stage4CeilFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=NFreqBins)
        -> Disable BehaviorSubject NFreqBins

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage5.Floor)
        -> Disable BehaviorSubject Stage5FloorFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=QuantizeBinSize)
        -> Disable BehaviorSubject QuantizeBinSize

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=StartFreq)
        -> Disable BehaviorSubject StartFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=EndFreq)
        -> Disable BehaviorSubject EndFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage5.Ceiling)
        -> Disable BehaviorSubject Stage5CeilFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage6.Floor)
        -> Disable BehaviorSubject Stage6FloorFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=ThresholdFrequencies.Stage6.Ceiling)
        -> Disable BehaviorSubject Stage6CeilFreq

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=Punishment.Stage4PunishedLick)
        -> Disable BehaviorSubject Stage4PunishedLick

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=Punishment.Stage5PunishedLick)
        -> Disable BehaviorSubject Stage5PunishedLick

        Disable SubscribeSubject TaskParams
        -> Disable MemberSelector(Selector=Punishment.Stage6PunishedLick)
        -> Disable BehaviorSubject Stage6PunishedLick

GroupWorkflow ComputeRewardZone
    SubscribeSubject TaskParams
    -> Bonsai.Scripting.Expressions.ExpressionTransform ComputeThreshold
      Expression: it.ShapingStage == 1 ? Convert.ToDouble(it.ThresholdFrequencies.Stage1.Floor) : it.ShapingStage == 2 ? Convert.ToDouble(it.ThresholdFrequencies.Stage2.Floor) : it.ShapingStage == 3 ? Convert.ToDouble(it.ThresholdFrequencies.Stage3.Floor) : it.ShapingStage == 4 ? Convert.ToDouble(it.ThresholdFrequencies.Stage4.Floor) :  it.ShapingStage == 5 ? Convert.ToDouble(it.ThresholdFrequencies.Stage5.Floor) : Convert.ToDouble(it.ThresholdFrequencies.Stage6.Floor)
    -> MulticastSubject RewardFloorFreq

    SubscribeSubject TaskParams
    -> Bonsai.Scripting.Expressions.ExpressionTransform ComputeThreshold
      Expression: it.ShapingStage == 1 ? Convert.ToDouble(it.ThresholdFrequencies.Stage1.Ceiling) : it.ShapingStage == 2 ? Convert.ToDouble(it.ThresholdFrequencies.Stage2.Ceiling) : it.ShapingStage == 3 ? Convert.ToDouble(it.ThresholdFrequencies.Stage3.Ceiling) : it.ShapingStage == 4 ? Convert.ToDouble(it.ThresholdFrequencies.Stage4.Ceiling) :  it.ShapingStage == 5 ? Convert.ToDouble(it.ThresholdFrequencies.Stage5.Ceiling) : Convert.ToDouble(it.ThresholdFrequencies.Stage6.Ceiling)
    -> MulticastSubject RewardCeilFreq

GroupWorkflow LickCounter(Description="Increments lick count on each lick")
    SubscribeSubject LickStateLeft
    -> Condition => #1
        WorkflowInput Source1
        -> WorkflowOutput
    SubscribeSubject LickCount => #2
    #1, #2 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject LickCount
    -> WorkflowOutput

GroupWorkflow TaskState
    Timer(DueTime=PT0S, Period=PT0.25S) => #0
    SubscribeSubject ShapingStage => #1
    #0, #1 -> WithLatestFrom => #2
    SubscribeSubject TrialNumber => #3
    #2, #3 -> WithLatestFrom => #4
    SubscribeSubject InterTrialInterval => #5
    #4, #5 -> WithLatestFrom => #6
    SubscribeSubject WheelDistanceCm => #7
    #6, #7 -> WithLatestFrom => #8
    SubscribeSubject TrialDistance => #9
    #8, #9 -> WithLatestFrom => #10
    SubscribeSubject MouseVirtualPosition => #11
    #10, #11 -> WithLatestFrom => #12
    SubscribeSubject CurrFreq => #13
    #12, #13 -> WithLatestFrom => #14
    SubscribeSubject TrackLength => #15
    #14, #15 -> WithLatestFrom => #16
    SubscribeSubject RewardFloorFreq => #17
    #16, #17 -> WithLatestFrom => #18
    SubscribeSubject RewardCeilFreq => #19
    #18, #19 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        "Stage:" + it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2.ToString() +
        " Trial:" + it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2.ToString() +
        " ITI:" + it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2.TotalSeconds.ToString("F0") + "s" + " TotDist:" + Convert.ToInt32(it.Item1.Item1.Item1.Item1.Item1.Item1.Item2).ToString() + "cm" +
        " TrialDist:" + Convert.ToInt32(it.Item1.Item1.Item1.Item1.Item1.Item2).ToString() + "cm" +
        " Position:" + Convert.ToInt32(it.Item1.Item1.Item1.Item1.Item2).ToString() + "cm" +
        " Freq:" + Convert.ToInt32(it.Item1.Item1.Item1.Item2).ToString() + "Hz" +
        " Track:" + Convert.ToInt32(it.Item1.Item1.Item2).ToString() + "cm" +
        " Zone:" + Convert.ToInt32(it.Item1.Item2).ToString() + "-" + Convert.ToInt32(it.Item2).ToString() + "Hz"
    -> WorkflowOutput

GroupWorkflow Logging
    GroupWorkflow TrialLogger
        SubscribeSubject TrialEnded
        -> Condition IsTrialEnded?
            WorkflowInput Source1
            -> WorkflowOutput
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Format(Format={0:F2}, Selector="") => #4
        SubscribeSubject Modality => #5
        #4, #5 -> WithLatestFrom => #6
        SubscribeSubject TrialNumber => #7
        #6, #7 -> WithLatestFrom => #8
        SubscribeSubject ShapingStage => #9
        #8, #9 -> WithLatestFrom => #10
        SubscribeSubject RewardFloorFreq => #11
        #10, #11 -> WithLatestFrom => #12
        SubscribeSubject RewardCeilFreq => #13
        #12, #13 -> WithLatestFrom => #14
        SubscribeSubject TrialEndFreq => #15
        #14, #15 -> WithLatestFrom => #16
        SubscribeSubject TrackLength => #17
        #16, #17 -> WithLatestFrom => #18
        SubscribeSubject TrialDistance => #19
        #18, #19 -> WithLatestFrom => #20
        SubscribeSubject LickCount => #21
        #20, #21 -> WithLatestFrom => #22
        SubscribeSubject WasRewarded => #23
        #22, #23 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform FormatTrialData => #25
          Expression:
            new
            (
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1 as BonsaiTime,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as Modality,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as Trial,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as ShapingStage,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as RewFreqFloor,
            it.Item1.Item1.Item1.Item1.Item1.Item2 as RewFreqCeil,
            it.Item1.Item1.Item1.Item1.Item2 as TrialEndFreq,
            it.Item1.Item1.Item1.Item2 as TrackLength,
            it.Item1.Item1.Item2 as TrialEndPosCm,
            it.Item1.Item2 as LickCount,
            it.Item2 as WasRewarded
            )
        ExternalizedMapping(Name, Extension)
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=TrialLog) => #3
            SubscribeSubject AnimalAndSessionID => #4
            #3, #4 -> Zip
            -> Format(Format={0}_{1}_, Selector="Item1, Item2")
            -> Take(Count=1) => #7
            -> UclOpen.Core.StripSubstring => #8
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=csv)
            -> Take(Count=1) => #11
            #0, #8, #7, #11 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #28
        #25, #28 -> Bonsai.IO.CsvWriter
          FileName: c:\Users\CoenLabUsers\Desktop\auditory-vr-corridor\auditory-vr-corridor\Logs\sub-Algernon\ses-5_date-2026-05-14T16-43-29\TrialLog_5_Algernon_\TrialLog_5_Algernon_.csv
          Append=false
          Overwrite=true
          Suffix=Timestamp
          IncludeHeader=true

    GroupWorkflow TaskSchemaLogger
        SubscribeSubject TaskParams
        -> UclOpenAuditoryVrCorridorDataSchema.SerializeToJson(Formatting=None)
        -> Delay(DueTime=PT1S)
        -> GroupWorkflow TaskSchemaLog
            Disable WorkflowInput Source2 => #0
            Disable ExternalizedMapping(Name)
            -> Disable GroupWorkflow FormatFileName
                SubscribeSubject PathPrefix => #0
                WorkflowInput Source1 => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
                #1, #2 -> StringProperty(Value=TaskSchemaLog) => #3
                SubscribeSubject AnimalAndSessionID => #4
                #3, #4 -> Zip
                -> Format(Format={0}_{1}_, Selector="Item1, Item2")
                -> Take(Count=1) => #7
                -> UclOpen.Core.StripSubstring => #8
                StringProperty(Value=json)
                -> Take(Count=1) => #10
                #0, #8, #7, #10 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
                -> WorkflowOutput
            -> Disable PropertyMapping(Path) => #3
            #0, #3 -> Disable UclOpen.Logging.JsonWriter
              Path: c:\Users\CoenL\Documents\TomC\auditory-vr-corridor\Logs\sub-r2d2\ses-newest_date-2026-03-05T17-50-13\TaskSchemaLog_newest_r2d2_\TaskSchemaLog_newest_r2d2_.json
              Suffix=Timestamp
              Overwrite=false
            -> Disable WorkflowOutput

            ExternalizedMapping(Name)
            -> GroupWorkflow FormatFileName
                SubscribeSubject PathPrefix => #0
                WorkflowInput Source1 => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
                #1, #2 -> StringProperty(Value=TaskSchemaLog) => #3
                SubscribeSubject AnimalAndSessionID => #4
                #3, #4 -> Zip
                -> Format(Format={0}_{1}_, Selector="Item1, Item2")
                -> Take(Count=1) => #7
                -> UclOpen.Core.StripSubstring => #8
                StringProperty(Value=json)
                -> Take(Count=1) => #10
                #0, #8, #7, #10 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
                -> WorkflowOutput
            -> PropertyMapping(Path) => #8
            WorkflowInput Source1 => #9
            #8, #9 -> UclOpen.Loggingv2.JsonWriter
              Path: c:\Users\CoenLabUsers\Desktop\auditory-vr-corridor\auditory-vr-corridor\Logs\sub-Algernon\ses-5_date-2026-05-14T16-43-29\TaskSchemaLog_5_Algernon_\TaskSchemaLog_5_Algernon_.json
              Suffix=None
              Overwrite=false
            -> WorkflowOutput

    GroupWorkflow LogParams
        SubscribeSubject TaskParams
        -> MemberSelector(Selector=LogConfig.LoggingRootPath)
        -> BehaviorSubject LoggingRootPath

        SubscribeSubject TaskParams
        -> MemberSelector(Selector=LogConfig.AnimalId)
        -> BehaviorSubject AnimalID

        SubscribeSubject TaskParams
        -> MemberSelector(Selector=LogConfig.SessionId)
        -> BehaviorSubject SessionID

        SubscribeSubject SessionID => #9
        SubscribeSubject AnimalID => #10
        #9, #10 -> Zip
        -> Format(Format={0}_{1}, Selector="Item1,Item2")
        -> BehaviorSubject AnimalAndSessionID

    Disable GroupWorkflow Cameras
        SubscribeSubject FrameEvents1
        -> GroupWorkflow LogVideo
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value.Image) => #1
            ExternalizedMapping(Name) => #2
            -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                SubscribeSubject PathPrefix => #0
                StringProperty(Value=Cameras) => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                -> StringProperty(Value=VideoData_Camera1) => #3
                ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                -> StringProperty(Value=avi)
                -> Take(Count=1) => #6
                #0, #1, #3, #6 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                -> WorkflowOutput
            -> PropertyMapping(FileName) => #4
            ExternalizedMapping(FrameRate) => #5
            #1, #4, #5 -> Bonsai.Vision.VideoWriter
              FileName=c:\Users\CoenLabUsers\Desktop\auditory-vr-corridor\auditory-vr-corridor\Logs\sub-Algernon\ses-1_date-2026-05-14T16-18-32\Cameras\VideoData_Camera1.avi
              Suffix=None
              Buffered=true
              Overwrite=true
              FourCC=FMP4
              FrameRate=50
              FrameSize(Width=0, Height=0)
              ResizeInterpolation=NearestNeighbor
            -> WorkflowOutput
            #0 -> MemberSelector(Selector=Seconds) => #8
            #0 -> MemberSelector(Selector=Value.ChunkData.Timestamp) => #9
            #0 -> MemberSelector(Selector=Value.ChunkData.FrameID) => #10
            #0 -> MemberSelector(Selector=Value.ChunkData.ExposureTime) => #11
            #8, #9, #10, #11 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
              Expression:
                new(
                Item1 as Seconds,
                Item2 as Timestamp,
                Item3 as FrameID,
                Item4 as ExposureTime)
            #2 -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                SubscribeSubject PathPrefix => #0
                StringProperty(Value=Cameras) => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                -> StringProperty(Value=VideoData_Camera1) => #3
                ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                -> StringProperty(Value=csv)
                -> Take(Count=1) => #6
                #0, #1, #3, #6 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                -> WorkflowOutput
            -> PropertyMapping(FileName) => #15
            #13, #15 -> Bonsai.IO.CsvWriter
              FileName=c:\Users\CoenLabUsers\Desktop\auditory-vr-corridor\auditory-vr-corridor\Logs\sub-Algernon\ses-1_date-2026-05-14T16-18-32\Cameras\VideoData_Camera1.csv
              Append=false
              Overwrite=true
              Suffix=None
              IncludeHeader=true
              Selector=""

        SubscribeSubject FrameEvents2
        -> GroupWorkflow LogVideo
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value.Image) => #1
            ExternalizedMapping(Name) => #2
            -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                SubscribeSubject PathPrefix => #0
                StringProperty(Value=Cameras) => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                -> StringProperty(Value=VideoData_Camera2) => #3
                ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                -> StringProperty(Value=avi)
                -> Take(Count=1) => #6
                #0, #1, #3, #6 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                -> WorkflowOutput
            -> PropertyMapping(FileName) => #4
            ExternalizedMapping(FrameRate) => #5
            #1, #4, #5 -> Bonsai.Vision.VideoWriter
              FileName=c:\Users\CoenLabUsers\Desktop\auditory-vr-corridor\auditory-vr-corridor\Logs\sub-Algernon\ses-1_date-2026-05-14T16-18-32\Cameras\VideoData_Camera2.avi
              Suffix=None
              Buffered=true
              Overwrite=true
              FourCC=FMP4
              FrameRate=50
              FrameSize(Width=0, Height=0)
              ResizeInterpolation=NearestNeighbor
            -> WorkflowOutput
            #0 -> MemberSelector(Selector=Seconds) => #8
            #0 -> MemberSelector(Selector=Value.ChunkData.Timestamp) => #9
            #0 -> MemberSelector(Selector=Value.ChunkData.FrameID) => #10
            #0 -> MemberSelector(Selector=Value.ChunkData.ExposureTime) => #11
            #8, #9, #10, #11 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
              Expression:
                new(
                Item1 as Seconds,
                Item2 as Timestamp,
                Item3 as FrameID,
                Item4 as ExposureTime)
            #2 -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                SubscribeSubject PathPrefix => #0
                StringProperty(Value=Cameras) => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                -> StringProperty(Value=VideoData_Camera2) => #3
                ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                -> StringProperty(Value=csv)
                -> Take(Count=1) => #6
                #0, #1, #3, #6 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                -> WorkflowOutput
            -> PropertyMapping(FileName) => #15
            #13, #15 -> Bonsai.IO.CsvWriter
              FileName=c:\Users\CoenLabUsers\Desktop\auditory-vr-corridor\auditory-vr-corridor\Logs\sub-Algernon\ses-1_date-2026-05-14T16-18-32\Cameras\VideoData_Camera2.csv
              Append=false
              Overwrite=true
              Suffix=None
              IncludeHeader=true
              Selector=""

        SubscribeSubject FrameEvents3
        -> GroupWorkflow LogVideo
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value.Image) => #1
            ExternalizedMapping(Name) => #2
            -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                SubscribeSubject PathPrefix => #0
                StringProperty(Value=Cameras) => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                -> StringProperty(Value=VideoData_Camera3) => #3
                ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                -> StringProperty(Value=avi)
                -> Take(Count=1) => #6
                #0, #1, #3, #6 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                -> WorkflowOutput
            -> PropertyMapping(FileName) => #4
            ExternalizedMapping(FrameRate) => #5
            #1, #4, #5 -> Bonsai.Vision.VideoWriter
              FileName=c:\Users\CoenLabUsers\Desktop\auditory-vr-corridor\auditory-vr-corridor\Logs\sub-Algernon\ses-1_date-2026-05-14T16-18-32\Cameras\VideoData_Camera3.avi
              Suffix=None
              Buffered=true
              Overwrite=true
              FourCC=FMP4
              FrameRate=50
              FrameSize(Width=0, Height=0)
              ResizeInterpolation=NearestNeighbor
            -> WorkflowOutput
            #0 -> MemberSelector(Selector=Seconds) => #8
            #0 -> MemberSelector(Selector=Value.ChunkData.Timestamp) => #9
            #0 -> MemberSelector(Selector=Value.ChunkData.FrameID) => #10
            #0 -> MemberSelector(Selector=Value.ChunkData.ExposureTime) => #11
            #8, #9, #10, #11 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #13
              Expression:
                new(
                Item1 as Seconds,
                Item2 as Timestamp,
                Item3 as FrameID,
                Item4 as ExposureTime)
            #2 -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
                SubscribeSubject PathPrefix => #0
                StringProperty(Value=Cameras) => #1
                ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file."))
                -> StringProperty(Value=VideoData_Camera3) => #3
                ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
                -> StringProperty(Value=csv)
                -> Take(Count=1) => #6
                #0, #1, #3, #6 -> Zip
                -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3, Item4")
                -> WorkflowOutput
            -> PropertyMapping(FileName) => #15
            #13, #15 -> Bonsai.IO.CsvWriter
              FileName=c:\Users\CoenLabUsers\Desktop\auditory-vr-corridor\auditory-vr-corridor\Logs\sub-Algernon\ses-1_date-2026-05-14T16-18-32\Cameras\VideoData_Camera3.csv
              Append=false
              Overwrite=true
              Suffix=None
              IncludeHeader=true
              Selector=""

    GroupWorkflow LicketySplit
        SubscribeSubject LickEventsLeft
        -> IncludeWorkflow(Path=UclOpen.Logging:LogHarpDevice.bonsai, LogName=LicketySplitLeft)

        Disable SubscribeSubject LickEventsRight
        -> Disable IncludeWorkflow(Path=UclOpen.Logging:LogHarpDevice.bonsai, LogName=LicketySplitRight)

    GroupWorkflow IntervalLogger
        SubscribeSubject WheelDistanceCm
        -> DistinctUntilChanged => #1
        SubscribeSubject LickCount
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: convert.ToDouble(it)
        -> DistinctUntilChanged => #4
        SubscribeSubject CurrFreq
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: convert.ToDouble(it)
        -> DistinctUntilChanged => #7
        SubscribeSubject AudAmplitude
        -> DistinctUntilChanged => #9
        #1, #4, #7, #9 -> Merge
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds) => #12
        SubscribeSubject StartTime => #13
        #12, #13 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform ElapsedMs
          Expression: it.Item1 - it.Item2
        -> Format(Format={0:F2}, Selector="") => #16
        SubscribeSubject TrialNumber => #17
        #16, #17 -> WithLatestFrom => #18
        SubscribeSubject WheelDistanceCm => #19
        #18, #19 -> WithLatestFrom => #20
        SubscribeSubject TrialDistance => #21
        #20, #21 -> WithLatestFrom => #22
        SubscribeSubject MouseVirtualPosition => #23
        #22, #23 -> WithLatestFrom => #24
        SubscribeSubject TrackLength => #25
        #24, #25 -> WithLatestFrom => #26
        SubscribeSubject CurrFreq => #27
        #26, #27 -> WithLatestFrom => #28
        SubscribeSubject AudAmplitude => #29
        #28, #29 -> WithLatestFrom => #30
        SubscribeSubject CurrFreqV => #31
        #30, #31 -> WithLatestFrom => #32
        SubscribeSubject CurrOpacity => #33
        #32, #33 -> WithLatestFrom => #34
        SubscribeSubject LickCount => #35
        #34, #35 -> WithLatestFrom => #36
        SubscribeSubject WasRewarded => #37
        #36, #37 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform FormatTrialData => #39
          Expression:
            new
            (
            Convert.ToInt32(Convert.ToDouble(it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1)) as BonsaiTime,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as Trial,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as TotalDistance,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as TrialDistance,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as MousePosition,
            it.Item1.Item1.Item1.Item1.Item1.Item1.Item2 as TrackLength,
            it.Item1.Item1.Item1.Item1.Item1.Item2 as AudFreq,
            it.Item1.Item1.Item1.Item1.Item2 as AudAmplitude,
            it.Item1.Item1.Item1.Item2 as VisFreq,
            it.Item1.Item1.Item2 as Opacity,
            it.Item1.Item2 as LickCount,
            it.Item2 as WasRewarded
            )
        ExternalizedMapping(Name, Extension)
        -> GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
            SubscribeSubject PathPrefix => #0
            WorkflowInput Source1 => #1
            ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
            #1, #2 -> StringProperty(Value=IntervalLog) => #3
            SubscribeSubject AnimalAndSessionID => #4
            #3, #4 -> Zip
            -> Format(Format={0}_{1}_, Selector="Item1, Item2")
            -> Take(Count=1) => #7
            -> UclOpen.Core.StripSubstring => #8
            ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
            -> StringProperty(Value=csv)
            -> Take(Count=1) => #11
            #0, #8, #7, #11 -> Zip
            -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
            -> WorkflowOutput
        -> PropertyMapping(FileName) => #42
        #39, #42 -> Bonsai.IO.CsvWriter
          FileName: c:\Users\CoenLabUsers\Desktop\auditory-vr-corridor\auditory-vr-corridor\Logs\sub-Algernon\ses-5_date-2026-05-14T16-43-29\IntervalLog_5_Algernon_\IntervalLog_5_Algernon_.csv
          Append=false
          Overwrite=true
          Suffix=Timestamp
          IncludeHeader=true
        -> WorkflowOutput
    -> WorkflowOutput

    SubscribeSubject LoggingRootPath
    -> PropertyMapping(Path) => #8
    SubscribeSubject SessionID
    -> PropertyMapping(SessionId) => #10
    SubscribeSubject AnimalID
    -> PropertyMapping(SubjectId) => #12
    #8, #10, #12 -> IncludeWorkflow
      Path=UclOpen.Logging:LogController.bonsai
      SubjectId=Algernon
      SessionId=5
      Path=c:\Users\CoenLabUsers\Desktop\auditory-vr-corridor\auditory-vr-corridor\Logs

    SubscribeSubject BehaviorEvents
    -> IncludeWorkflow(Path=UclOpen.Logging:LogHarpDevice.bonsai, LogName=Behavior)

    Disable ExternalizedMapping(Name, Extension)
    -> Disable GroupWorkflow FormatFileName(Description="Generates a log filename based on the input timestamp.")
        SubscribeSubject PathPrefix => #0
        WorkflowInput Source1 => #1
        ExternalizedMapping(Value(DisplayName=Name, Description="The base name of the log file.")) => #2
        #1, #2 -> StringProperty(Value=IntervalLog) => #3
        SubscribeSubject AnimalAndSessionID => #4
        #3, #4 -> Zip
        -> Format(Format={0}_{1}_, Selector="Item1, Item2")
        -> Take(Count=1) => #7
        -> UclOpen.Core.StripSubstring => #8
        ExternalizedMapping(Value(DisplayName=Extension, Description="The file extension"))
        -> StringProperty(Value=csv)
        -> Take(Count=1) => #11
        #0, #8, #7, #11 -> Zip
        -> Format(Format={0}\{1}\{2}.{3}, Selector="Item1,Item2,Item3,Item4")
        -> WorkflowOutput

GroupWorkflow InitMixer
    Bonsai.Mixer.CreateMixerContext(HostApi="Windows DirectSound", DeviceName="Speakers (6- XMOS xCORE-200 MC (UAC2.0))", SampleRate=50000, SuggestedLatency=nil)
    -> Bonsai.Mixer.StartMixer
    -> BehaviorSubject Mixer

    SubscribeSubject Buffer => #3
    SubscribeSubject Mixer
    -> PropertyMapping(Mixer) => #5
    #3, #5 -> Bonsai.Mixer.QueueBuffer

Defer BeepTimer => #10
    ExternalizedMapping(Period)
    -> Timer(DueTime=PT0S, Period=PT0.05S) => #1
    ExternalizedMapping(RangeMin, RangeMax, Count)
    -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=2, RangeMin=1, RangeMax=2)
    -> Bonsai.Numerics.Permutation
    -> Take(Count=1)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> MulticastSubject InterTrialInterval
    -> SelectMany InitITI => #8
        WorkflowInput Source1
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT2S)
        -> SelectMany WaitForQuiescence
            SubscribeSubject WheelDistanceCm
            -> Bonsai.Scripting.Expressions.ExpressionTransform BinDist
              Expression: Math.Floor(it / 0.1)
            -> DistinctUntilChanged => #2
            DoubleProperty(Value=0) => #3
            #2, #3 -> Merge
            -> Throttle(DueTime=PT0.5S)
            -> Take(Count=1)
            -> WorkflowOutput
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEncoderResetPayload(EncoderReset=EncoderPort2)) => #9
    #1, #9 -> SubscribeWhen
    -> MulticastSubject BeepTimer
    -> WorkflowOutput
    #8 -> Timestamp
    -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
    -> Take(Count=1)
    -> MulticastSubject StartTime
    SubscribeSubject WheelDistanceCm => #17
    #8, #17 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Take(Count=1)
    -> MulticastSubject TrialStartWheelDistance
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: 0.0
    -> MulticastSubject TrialDistFloor
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: false
    -> MulticastSubject TrialEnded

    SubscribeSubject TrialNumber
    -> Take(Count=1)
    -> Add(Operand=IntProperty(Value=1))
    -> MulticastSubject TrialNumber

    IntProperty(Value=0)
    -> MulticastSubject CurrFreq

    BooleanProperty(Value=false)
    -> MulticastSubject WasRewarded

    IntProperty(Value=0)
    -> MulticastSubject LickCount

    DoubleProperty(Value=0)
    -> MulticastSubject CurrFreqV

    DoubleProperty(Value=0)
    -> MulticastSubject TrialDistFloor

    SubscribeSubject WheelDistanceCm
    -> Take(Count=1)
    -> MulticastSubject TrialStartWheelDistance
SubscribeSubject WaveformDict => #11
Disable SubscribeSubject StartSession
-> Disable Skip(Count=1) => #13
Disable SubscribeSubject WaveformDict => #14
#13, #14 -> Disable Zip => #15
#10, #11, #15 -> SubscribeWhen => #16
SubscribeSubject MouseVirtualPosition => #17
#16, #17 -> WithLatestFrom
-> Skip(Count=1)
-> MemberSelector(Selector=Item2) => #20
SubscribeSubject TaskParams => #21
-> MemberSelector(Selector=QuantizeBinSize) => #22
#20, #22 -> WithLatestFrom
-> Bonsai.Scripting.Expressions.ExpressionTransform "Quantize Wheel Distance" => #24
  Expression: Math.Round(it.Item1/it.Item2) * it.Item2
Defer "Random Track Length" => #25
    IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=6, RangeMin=20, RangeMax=120)
    -> Bonsai.Numerics.Permutation
    -> Take(Count=1)
    -> MulticastSubject TrackLength
    -> WorkflowOutput
#21 -> MemberSelector(Selector=StartFreq) => #26
#21 -> MemberSelector(Selector=EndFreq) => #27
#25, #26, #27 -> Zip => #28
#24, #28 -> WithLatestFrom
-> Bonsai.Scripting.Expressions.ExpressionTransform "cm to Hz" => #30
  Expression: it.Item2.Item2*Math.Pow(it.Item2.Item3/it.Item2.Item2, Math.Max(0, Math.Min(1, it.Item1 /it.Item2.Item1)))
-> Condition IsTrial1
    SubscribeSubject ShapingStage
    -> Take(Count=1)
    -> Equal(Operand=IntProperty(Value=1)) => #2
    Source2=#2 -> WorkflowOutput
-> GroupWorkflow AddFreqDriftA => #32
    WorkflowInput Source1 => #0
    SubscribeSubject TaskParams => #1
    -> MemberSelector(Selector=StartFreq) => #2
    -> PropertyMapping(Value) => #3
    #0, #3 -> Subtract(Operand=DoubleProperty(Value=2000))
    -> Bonsai.Scripting.Expressions.ExpressionTransform FreqFromMoving => #5
      Expression: it
    SubscribeSubject BeepTimer => #6
    #1 -> MemberSelector(Selector=EndFreq) => #7
    SubscribeSubject DriftBeepsTillEnd => #8
    #2, #7, #8 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform Multiplier => #10
      Expression: Math.Pow(it.Item2 / it.Item1, 1.0 / it.Item3)
    #6, #10 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform Multiplier^n-steps => #12
      Expression: Math.Pow(it.Item2, it.Item1)
    SubscribeSubject TaskParams
    -> MemberSelector(Selector=StartFreq) => #14
    #12, #14 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform "geometric drift"
      Expression: it.item2 * it.Item1
    -> PropertyMapping(Value) => #17
    #5, #17 -> Add(Operand=DoubleProperty(Value=2133.4806488342265))
    -> WorkflowOutput
#30 -> Condition IsNotTrial1 => #33
    SubscribeSubject ShapingStage
    -> Take(Count=1)
    -> NotEqual(Operand=IntProperty(Value=1)) => #2
    Source2=#2 -> WorkflowOutput
#32, #33 -> Merge
-> MulticastSubject CurrFreq
-> CreateObservable MakeSoundwave
    WorkflowInput Source1 => #0
    SubscribeSubject TaskParams => #1
    -> MemberSelector(Selector=StartFreq) => #2
    #1 -> MemberSelector(Selector=EndFreq) => #3
    #1 -> MemberSelector(Selector=NFreqBins) => #4
    #0, #2, #3, #4 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform GetPercentProgress => #6
      Expression: Convert.ToInt32(Math.Max(0.0, Math.Min(Convert.ToDouble(it.Item4) - 1.0, Convert.ToDouble(it.Item1) <= 0.0 ? 0.0 : Math.Round(Math.Log(Convert.ToDouble(it.Item1) / Convert.ToDouble(it.Item2)) / Math.Log(Convert.ToDouble(it.Item3) / Convert.ToDouble(it.Item2)) * (Convert.ToDouble(it.Item4) - 1.0)))))
    SubscribeSubject WaveformDict => #7
    #6, #7 -> WithLatestFrom
    -> InputMapping(Selector=Item2, Value(Selector=Item1))
    -> Index(Operand=IntProperty(Value=85))
    -> WorkflowOutput
-> Switch
-> PublishSubject Buffer => #38
GroupWorkflow IsTrialEnd(Description="Determines trial end based on shaping stage") => #39
    SubscribeSubject ShapingStage => #0
    SubscribeSubject CurrFreq => #1
    SubscribeSubject RewardFloorFreq => #2
    #1, #2 -> WithLatestFrom
    -> Condition WaitForReset
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Item1 < it.Item2
        -> WorkflowOutput
    -> Take(Count=1) => #5
    #0, #5 -> SubscribeWhen
    -> Take(Count=1) => #7
    -> Condition IsStage1or2
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform IsStage1or2
          Expression: ((it >= 1) && (it <= 2))
        -> WorkflowOutput
    -> SelectMany FreqInRewZone => #9
        SubscribeSubject CurrFreq => #0
        SubscribeSubject RewardFloorFreq => #1
        #0, #1 -> WithLatestFrom
        -> Condition FreqAboveThreshold
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1 >= it.Item2
            -> WorkflowOutput
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> WorkflowOutput

        Disable SubscribeSubject CurrFreq => #7
        Disable SubscribeSubject CurrFreq => #8
        Disable SubscribeSubject RewardFloorFreq => #9
        #8, #9 -> Disable WithLatestFrom
        -> Disable Condition WaitForReset
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1 < it.Item2
            -> WorkflowOutput
        -> Disable Take(Count=1) => #12
        #7, #12 -> Disable SubscribeWhen => #13
        Disable SubscribeSubject RewardFloorFreq => #14
        #13, #14 -> Disable WithLatestFrom
        -> Disable Condition FreqAboveThreshold
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1 >= it.Item2
            -> WorkflowOutput
        -> Disable Take(Count=1)
        -> Disable BooleanProperty(Value=true)
        -> Disable WorkflowOutput
    #7 -> Condition IsStage3
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=3))
        -> WorkflowOutput
    -> SelectMany LickDetected
        Bonsai.Windows.Input.KeyDown(Filter=L, SuppressRepetitions=false)
        -> BooleanProperty(Value=true)
        -> WorkflowOutput
    -> Condition LickOnTarget => #12
        SubscribeSubject CurrFreq => #0
        WorkflowInput Source1 => #1
        #0, #1 -> Sample => #2
        SubscribeSubject RewardFloorFreq => #3
        #2, #3 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform IsOnTarget
          Expression: (it.Item1 >= it.Item2)
        -> WorkflowOutput
    #7 -> Condition IsStage4or5or6
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform Is4or5or6
          Expression: ((it >= 4) && (it <= 6))
        -> WorkflowOutput
    -> SelectMany LickDetected => #14
        Bonsai.Windows.Input.KeyDown(Filter=L, SuppressRepetitions=false)
        -> BooleanProperty(Value=true)
        -> WorkflowOutput
    -> Condition LickOnTarget => #15
        SubscribeSubject CurrFreq => #0
        WorkflowInput Source1 => #1
        #0, #1 -> Sample => #2
        SubscribeSubject RewardFloorFreq => #3
        SubscribeSubject RewardCeilFreq => #4
        #3, #4 -> Zip => #5
        #2, #5 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform IsOnTarget
          Expression: ((it.Item1 >= it.Item2.Item1) && (it.Item1 <= it.Item2.Item2))
        -> WorkflowOutput
    #14 -> Condition LickOffTarget
        SubscribeSubject CurrFreq => #0
        WorkflowInput Source1 => #1
        #0, #1 -> Sample => #2
        SubscribeSubject RewardFloorFreq => #3
        SubscribeSubject RewardCeilFreq => #4
        #3, #4 -> Zip => #5
        #2, #5 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform IsOffTarget
          Expression: ((it.Item1 < it.Item2.Item1) || (it.Item1 > it.Item2.Item2))
        -> WorkflowOutput
    -> Condition WrongLicksAboveLimit => #17
        SubscribeSubject LickCount => #0
        SubscribeSubject TaskParams
        -> Bonsai.Scripting.Expressions.ExpressionTransform WrongLickLimit => #2
          Expression: it.ShapingStage == 4 ? Convert.ToDouble(it.Punishment.Stage4PunishedLick) : it.ShapingStage == 5 ? Convert.ToDouble(it.Punishment.Stage5PunishedLick) : it.ShapingStage == 6 ? Convert.ToDouble(it.Punishment.Stage6PunishedLick) : Convert.ToDouble(1000)
        #0, #2 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform LicksAboveLimit
          Expression: (it.Item1 >= it.Item2)
        -> WorkflowOutput

        Disable SubscribeSubject LickCount => #6
        Disable SubscribeSubject TaskParams => #7
        Disable SubscribeSubject ShapingStage => #8
        #7, #8 -> Disable Zip
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform WrongLickLimit => #10
          Expression: it.Item2 == 4 ? Convert.ToDouble(it.Item1.Punishment.Stage4PunishedLick) : it.Item2 == 5 ? Convert.ToDouble(it.Item1.Punishment.Stage5PunishedLick) : it.Item2 == 6 ? Convert.ToDouble(it.Item1.Punishment.Stage6PunishedLick) : Convert.ToDouble(1000)
        #6, #10 -> Disable WithLatestFrom
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform LicksAboveLimit
          Expression: (it.Item1 >= it.Item2)
        -> Disable WorkflowOutput
    #9, #12, #15, #17 -> Merge
    -> WorkflowOutput
#38, #39 -> TakeUntil => #40
SubscribeSubject StartFreqV => #41
SubscribeSubject EndFreqV => #42
#25, #41, #42 -> Zip => #43
#24, #43 -> WithLatestFrom
-> Bonsai.Scripting.Expressions.ExpressionTransform "cm to SpatFreq" => #45
  Expression: it.Item2.Item2*Math.Pow(it.Item2.Item3/it.Item2.Item2, Math.Max(0, Math.Min(1, it.Item1 /it.Item2.Item1)))
-> Condition IsTrial1
    SubscribeSubject ShapingStage
    -> Take(Count=1)
    -> Equal(Operand=IntProperty(Value=1)) => #2
    Source2=#2 -> WorkflowOutput
-> GroupWorkflow AddFreqDriftV => #47
    WorkflowInput Source1 => #0
    SubscribeSubject StartFreqV => #1
    -> PropertyMapping(Value) => #2
    #0, #2 -> Subtract(Operand=DoubleProperty(Value=4))
    -> Bonsai.Scripting.Expressions.ExpressionTransform FreqFromMoving => #4
      Expression: it
    SubscribeSubject BeepTimer => #5
    SubscribeSubject EndFreqV => #6
    SubscribeSubject DriftBeepsTillEnd => #7
    #1, #6, #7 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform Multiplier => #9
      Expression: Math.Pow(it.Item2 / it.Item1, 1.0 / it.Item3)
    #5, #9 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform Multiplier^n-steps => #11
      Expression: Math.Pow(it.Item2, it.Item1)
    SubscribeSubject StartFreqV => #12
    #11, #12 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform "geometric drift"
      Expression: it.item2 * it.Item1
    -> PropertyMapping(Value) => #15
    #4, #15 -> Add(Operand=DoubleProperty(Value=4.1468044040788881))
    -> WorkflowOutput
#45 -> Condition IsNotTrial1 => #48
    SubscribeSubject ShapingStage
    -> Take(Count=1)
    -> NotEqual(Operand=IntProperty(Value=1)) => #2
    Source2=#2 -> WorkflowOutput
#47, #48 -> Merge
-> MulticastSubject CurrFreqV => #50
SubscribeSubject BeepTimer => #51
-> GroupWorkflow OpacityOnOff => #52
    WorkflowInput Source1
    -> Bonsai.Scripting.Expressions.ExpressionTransform "Alternate On Off" => #1
      Expression: (it % 2 == 0) ? 0.0 : 1.0
    SubscribeSubject Opacity
    -> PropertyMapping(Value) => #3
    #1, #3 -> Multiply(Operand=DoubleProperty(Value=1)) => #4
    SubscribeSubject VisualStimActive
    -> PropertyMapping(Value) => #6
    #4, #6 -> Multiply(Operand=DoubleProperty(Value=1))
    -> MulticastSubject CurrOpacity
    -> WorkflowOutput
#51 -> GroupWorkflow RandomisePhase => #53
    WorkflowInput Source1
    -> Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
    -> Bonsai.Numerics.Distributions.Sample
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: (it*360)-180
    -> MulticastSubject CurrPhase
    -> WorkflowOutput
#50, #52, #53 -> Zip
-> CreateObservable MakeGrating
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject settingsV

    Bonsai.Shaders.RenderFrame
    -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai) => #4
    SubscribeSubject settingsV => #5
    -> MemberSelector(Selector=Item1)
    -> PropertyMapping(SpatialFrequency) => #7
    #5 -> MemberSelector(Selector=Item2)
    -> PropertyMapping(Opacity) => #9
    #5 -> MemberSelector(Selector=Item3)
    -> PropertyMapping(Phase) => #11
    #4, #7, #9, #11 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawGratings.bonsai
      LocationX=0
      LocationY=0
      Layer=1
      ExtentX=2
      ExtentY=2
      SpatialFrequency=13.4408665
      TemporalFrequency=0
      Phase=-6418.465
      Angle=90
      SquareWave=false
      Contrast=1
      DutyCycle=nil
      Radius=1
      Aperture=1
      Opacity=1
    -> WorkflowOutput
-> Switch => #56
#56, #39 -> TakeUntil => #57
#40, #57 -> Zip
-> MemberSelector(Selector=Item1)
-> GroupWorkflow ProcessTrialEnd
    WorkflowInput Source1
    -> TakeLast(Count=1) => #1
    SubscribeSubject CurrFreq => #2
    #1, #2 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> MulticastSubject TrialEndFreq => #5
    SubscribeSubject RewardFloorFreq => #6
    SubscribeSubject RewardCeilFreq => #7
    #6, #7 -> Zip => #8
    #5, #8 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform IsOnTarget
      Expression: ((it.Item1 >= it.Item2.Item1) && (it.Item1 <= it.Item2.Item2))
    -> BehaviorSubject WasOnTarget => #11
    -> Condition OnTarget
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany RewardTone => #13
        SubscribeSubject TaskParams
        -> MemberSelector(Selector=Amplitude) => #1
        -> PropertyMapping(Amplitude)
        -> Bonsai.Dsp.FunctionGenerator(BufferLength=500, Frequency=6000, Waveform=Sine, SampleRate=50000, Depth=F32, Amplitude=0.5, Offset=0, Phase=0)
        -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=0.05, RescaleType=Linear)
        -> Take(Count=25) => #5
        #1 -> PropertyMapping(Amplitude)
        -> Bonsai.Dsp.FunctionGenerator(BufferLength=500, Frequency=9000, Waveform=Sine, SampleRate=50000, Depth=F32, Amplitude=0.5, Offset=0, Phase=0)
        -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=0.05, RescaleType=Linear)
        -> Take(Count=25) => #9
        #5, #9 -> Concat
        -> Bonsai.Dsp.Tile(RowTiles=32, ColumnTiles=1) => #11
        SubscribeSubject Mixer
        -> PropertyMapping(Mixer) => #13
        #11, #13 -> Bonsai.Mixer.QueueBuffer
        -> Disable Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on DELL S2722DC (5- HD Audio Driver for Display Audio)", SampleRate=50000, State=Playing)
        -> TakeLast(Count=1)
        -> BooleanProperty(Value=true)
        -> WorkflowOutput
    SubscribeSubject ShapingStage => #14
    #11 -> Condition OffTarget => #15
        WorkflowInput Source1
        -> BitwiseNot
        -> WorkflowOutput
    #14, #15 -> SubscribeWhen
    -> Take(Count=1) => #17
    -> Condition IsStage4or5or6
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform Is4or5or6
          Expression: ((it >= 4) && (it <= 6))
        -> WorkflowOutput
    -> SelectMany PunishmentToneAndTimeout => #19
        SubscribeSubject Mixer
        -> PropertyMapping(Mixer) => #1
        Bonsai.Audio.AudioReader(FileName=waveforms\error_tone.wav, BufferLength=0, SampleRate=0) => #2
        DoubleProperty(Value=32767)
        -> Bonsai.Scripting.Expressions.ExpressionTransform "S16 to F32"
          Expression: 1/it
        -> PropertyMapping(Scale) => #5
        #2, #5 -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=3.0518509475997192E-05, Shift=0)
        -> Take(Count=1) => #7
        #1, #7 -> Bonsai.Mixer.QueueBuffer
        -> Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on DELL S2722DC (5- HD Audio Driver for Display Audio)", SampleRate=50000, State=Playing)
        -> TakeLast(Count=1) => #10
        SubscribeSubject TaskParams
        -> MemberSelector(Selector=Punishment.TimeoutSec)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT5S) => #15
        #10, #15 -> Zip
        -> BooleanProperty(Value=false)
        -> WorkflowOutput
    #17 -> Condition IsNotStage4or5or6?
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform IsNot4or5or6
          Expression: (it < 4)
        -> WorkflowOutput
    -> BooleanProperty(Value=false) => #21
    Source1=#13, Source3=#19, Source4=#21 -> Merge
    -> MulticastSubject WasRewarded
    -> BooleanProperty(Value=true)
    -> MulticastSubject TrialEnded
    -> WorkflowOutput
-> Repeat
-> WorkflowOutput

SubscribeSubject WheelDistanceCm => #63
SubscribeSubject TrialStartWheelDistance => #64
#63, #64 -> WithLatestFrom
-> Bonsai.Scripting.Expressions.ExpressionTransform TrialDistance
  Expression: it.Item1 - it.Item2
-> PublishSubject TrialDistance

SubscribeSubject TrialDistance => #68
SubscribeSubject TrialDistFloor => #69
#68, #69 -> WithLatestFrom => #70
SubscribeSubject TrackLength => #71
#70, #71 -> WithLatestFrom => #72
SubscribeSubject TrialEnded => #73
#72, #73 -> WithLatestFrom
-> Bonsai.Scripting.Expressions.ExpressionTransform CalcVirtualPos => #75
  Description="Prevent pos < 0cm or >TrackLengthcm. Gate on TrialEnded to prevent stale feedback."
  Expression:
    new (
    Convert.ToBoolean(it.Item2) ? 0.0 : Math.Min(it.Item1.Item1.Item2, it.Item1.Item1.Item1) as Floor,
    Convert.ToBoolean(it.Item2) ? 0.0 : Math.Min((it.Item1.Item1.Item1 - Math.Min(it.Item1.Item1.Item2, it.Item1.Item1.Item1)), it.Item1.Item2) as VirtualPos
    )
-> MemberSelector(Selector=Floor)
-> MulticastSubject TrialDistFloor
#75 -> MemberSelector(Selector=VirtualPos)
-> PublishSubject MouseVirtualPosition

Disable GroupWorkflow TaskLogic => #80
    Defer BeepTimer => #0
        ExternalizedMapping(Period)
        -> Timer(DueTime=PT0S, Period=PT0.05S) => #1
        ExternalizedMapping(RangeMin, RangeMax, Count)
        -> IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=2, RangeMin=1, RangeMax=2)
        -> Bonsai.Numerics.Permutation
        -> Take(Count=1)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: TimeSpan.FromSeconds(it)
        -> MulticastSubject InterTrialInterval
        -> SelectMany InitITI => #8
            WorkflowInput Source1
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT1S)
            -> SelectMany WaitForQuiescence
                SubscribeSubject WheelDistanceCm
                -> Bonsai.Scripting.Expressions.ExpressionTransform BinDist
                  Expression: Math.Floor(it / 0.1)
                -> DistinctUntilChanged => #2
                DoubleProperty(Value=0) => #3
                #2, #3 -> Merge
                -> Throttle(DueTime=PT0.5S)
                -> Take(Count=1)
                -> WorkflowOutput
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateEncoderResetPayload(EncoderReset=EncoderPort2)) => #9
        #1, #9 -> SubscribeWhen
        -> MulticastSubject BeepTimer
        -> WorkflowOutput
        #8 -> Timestamp
        -> MemberSelector(Selector=Timestamp.TimeOfDay.TotalMilliseconds)
        -> Take(Count=1)
        -> MulticastSubject StartTime
        SubscribeSubject WheelDistanceCm => #17
        #8, #17 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Take(Count=1)
        -> MulticastSubject TrialStartWheelDistance
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: 0.0
        -> MulticastSubject TrialDistFloor
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: false
        -> MulticastSubject TrialEnded

        SubscribeSubject TrialNumber
        -> Take(Count=1)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject TrialNumber

        IntProperty(Value=0)
        -> MulticastSubject CurrFreq

        BooleanProperty(Value=false)
        -> MulticastSubject WasRewarded

        IntProperty(Value=0)
        -> MulticastSubject LickCount

        DoubleProperty(Value=0)
        -> MulticastSubject CurrFreqV

        DoubleProperty(Value=0)
        -> MulticastSubject TrialDistFloor

        SubscribeSubject WheelDistanceCm
        -> Take(Count=1)
        -> MulticastSubject TrialStartWheelDistance
    SubscribeSubject WaveformDict => #1
    #0, #1 -> SubscribeWhen => #2
    SubscribeSubject MouseVirtualPosition => #3
    #2, #3 -> WithLatestFrom
    -> Skip(Count=1)
    -> MemberSelector(Selector=Item2) => #6
    SubscribeSubject TaskParams => #7
    -> MemberSelector(Selector=QuantizeBinSize) => #8
    #6, #8 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform "Quantize Wheel Distance" => #10
      Expression: Math.Round(it.Item1/it.Item2) * it.Item2
    Defer "Random Track Length" => #11
        IncludeWorkflow(Path=BonVision:Primitives.ParameterRange.bonsai, Count=6, RangeMin=20, RangeMax=120)
        -> Bonsai.Numerics.Permutation
        -> Take(Count=1)
        -> MulticastSubject TrackLength
        -> WorkflowOutput
    #7 -> MemberSelector(Selector=StartFreq) => #12
    #7 -> MemberSelector(Selector=EndFreq) => #13
    #11, #12, #13 -> Zip => #14
    #10, #14 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform "cm to Hz" => #16
      Expression: it.Item2.Item2*Math.Pow(it.Item2.Item3/it.Item2.Item2, Math.Max(0, Math.Min(1, it.Item1 /it.Item2.Item1)))
    -> Condition IsTrial1
        SubscribeSubject ShapingStage
        -> Take(Count=1)
        -> Equal(Operand=IntProperty(Value=1)) => #2
        Source2=#2 -> WorkflowOutput
    -> GroupWorkflow AddFreqDriftA => #18
        WorkflowInput Source1 => #0
        SubscribeSubject TaskParams => #1
        -> MemberSelector(Selector=StartFreq) => #2
        -> PropertyMapping(Value) => #3
        #0, #3 -> Subtract(Operand=DoubleProperty(Value=2000))
        -> Bonsai.Scripting.Expressions.ExpressionTransform FreqFromMoving => #5
          Expression: it
        SubscribeSubject BeepTimer => #6
        #1 -> MemberSelector(Selector=EndFreq) => #7
        SubscribeSubject DriftBeepsTillEnd => #8
        #2, #7, #8 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform Multiplier => #10
          Expression: Math.Pow(it.Item2 / it.Item1, 1.0 / it.Item3)
        #6, #10 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform Multiplier^n-steps => #12
          Expression: Math.Pow(it.Item2, it.Item1)
        SubscribeSubject TaskParams
        -> MemberSelector(Selector=StartFreq) => #14
        #12, #14 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform "geometric drift"
          Expression: it.item2 * it.Item1
        -> PropertyMapping(Value) => #17
        #5, #17 -> Add(Operand=DoubleProperty(Value=2804.1332373529922))
        -> WorkflowOutput
    #16 -> Condition IsNotTrial1 => #19
        SubscribeSubject ShapingStage
        -> Take(Count=1)
        -> NotEqual(Operand=IntProperty(Value=1)) => #2
        Source2=#2 -> WorkflowOutput
    #18, #19 -> Merge
    -> MulticastSubject CurrFreq => #21
    GroupWorkflow AmplitudeOnOff => #22
        SubscribeSubject BeepTimer
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Alternate On Off" => #1
          Expression: (it % 2 == 0) ? 0.0 : 1.0
        SubscribeSubject TaskParams
        -> MemberSelector(Selector=Amplitude)
        -> PropertyMapping(Value) => #4
        #1, #4 -> Multiply(Operand=DoubleProperty(Value=0.5))
        -> MulticastSubject CurrAmp
        -> WorkflowOutput
    #21, #22 -> Zip
    -> CreateObservable MakeSoundwave
        WorkflowInput Source1 => #0
        SubscribeSubject TaskParams => #1
        -> MemberSelector(Selector=StartFreq) => #2
        #1 -> MemberSelector(Selector=EndFreq) => #3
        #1 -> MemberSelector(Selector=NFreqBins) => #4
        #0, #2, #3, #4 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform GetPercentProgress => #6
          Expression: Convert.ToInt32(Math.Max(0.0, Math.Min(Convert.ToDouble(it.Item4) - 1.0, Convert.ToDouble(it.Item1.Item1) <= 0.0 ? 0.0 : Math.Round(Math.Log(Convert.ToDouble(it.Item1.Item1) / Convert.ToDouble(it.Item2)) / Math.Log(Convert.ToDouble(it.Item3) / Convert.ToDouble(it.Item2)) * (Convert.ToDouble(it.Item4) - 1.0)))))
        SubscribeSubject WaveformDict => #7
        #6, #7 -> WithLatestFrom
        -> InputMapping(Selector=Item2, Value(Selector=Item1))
        -> Index(Operand=IntProperty(Value=13))
        -> WorkflowOutput
    -> Switch
    -> MulticastSubject Buffer => #26
    GroupWorkflow IsTrialEnd(Description="Determines trial end based on shaping stage") => #27
        SubscribeSubject ShapingStage => #0
        SubscribeSubject CurrFreq => #1
        SubscribeSubject RewardFloorFreq => #2
        #1, #2 -> WithLatestFrom
        -> Condition WaitForReset
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1 < it.Item2
            -> WorkflowOutput
        -> Take(Count=1) => #5
        #0, #5 -> SubscribeWhen
        -> Take(Count=1) => #7
        -> Condition IsStage1or2
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsStage1or2
              Expression: ((it >= 1) && (it <= 2))
            -> WorkflowOutput
        -> SelectMany FreqInRewZone => #9
            SubscribeSubject CurrFreq => #0
            SubscribeSubject RewardFloorFreq => #1
            #0, #1 -> WithLatestFrom
            -> Condition FreqAboveThreshold
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it.Item1 >= it.Item2
                -> WorkflowOutput
            -> Take(Count=1)
            -> BooleanProperty(Value=true)
            -> WorkflowOutput

            Disable SubscribeSubject CurrFreq => #7
            Disable SubscribeSubject CurrFreq => #8
            Disable SubscribeSubject RewardFloorFreq => #9
            #8, #9 -> Disable WithLatestFrom
            -> Disable Condition WaitForReset
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it.Item1 < it.Item2
                -> WorkflowOutput
            -> Disable Take(Count=1) => #12
            #7, #12 -> Disable SubscribeWhen => #13
            Disable SubscribeSubject RewardFloorFreq => #14
            #13, #14 -> Disable WithLatestFrom
            -> Disable Condition FreqAboveThreshold
                WorkflowInput Source1
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: it.Item1 >= it.Item2
                -> WorkflowOutput
            -> Disable Take(Count=1)
            -> Disable BooleanProperty(Value=true)
            -> Disable WorkflowOutput
        #7 -> Condition IsStage3
            WorkflowInput Source1
            -> Equal(Operand=IntProperty(Value=3))
            -> WorkflowOutput
        -> SelectMany LickDetected
            Bonsai.Windows.Input.KeyDown(Filter=L, SuppressRepetitions=false)
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        -> Condition LickOnTarget => #12
            SubscribeSubject CurrFreq => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample => #2
            SubscribeSubject RewardFloorFreq => #3
            #2, #3 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsOnTarget
              Expression: (it.Item1 >= it.Item2)
            -> WorkflowOutput
        #7 -> Condition IsStage4or5or6
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform Is4or5or6
              Expression: ((it >= 4) && (it <= 6))
            -> WorkflowOutput
        -> SelectMany LickDetected => #14
            Bonsai.Windows.Input.KeyDown(Filter=L, SuppressRepetitions=false)
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        -> Condition LickOnTarget => #15
            SubscribeSubject CurrFreq => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample => #2
            SubscribeSubject RewardFloorFreq => #3
            SubscribeSubject RewardCeilFreq => #4
            #3, #4 -> Zip => #5
            #2, #5 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsOnTarget
              Expression: ((it.Item1 >= it.Item2.Item1) && (it.Item1 <= it.Item2.Item2))
            -> WorkflowOutput
        #14 -> Condition LickOffTarget
            SubscribeSubject CurrFreq => #0
            WorkflowInput Source1 => #1
            #0, #1 -> Sample => #2
            SubscribeSubject RewardFloorFreq => #3
            SubscribeSubject RewardCeilFreq => #4
            #3, #4 -> Zip => #5
            #2, #5 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsOffTarget
              Expression: ((it.Item1 < it.Item2.Item1) || (it.Item1 > it.Item2.Item2))
            -> WorkflowOutput
        -> Condition WrongLicksAboveLimit => #17
            SubscribeSubject LickCount => #0
            SubscribeSubject TaskParams
            -> Bonsai.Scripting.Expressions.ExpressionTransform WrongLickLimit => #2
              Expression: it.ShapingStage == 4 ? Convert.ToDouble(it.Punishment.Stage4PunishedLick) : it.ShapingStage == 5 ? Convert.ToDouble(it.Punishment.Stage5PunishedLick) : it.ShapingStage == 6 ? Convert.ToDouble(it.Punishment.Stage6PunishedLick) : Convert.ToDouble(1000)
            #0, #2 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform LicksAboveLimit
              Expression: (it.Item1 >= it.Item2)
            -> WorkflowOutput

            Disable SubscribeSubject LickCount => #6
            Disable SubscribeSubject TaskParams => #7
            Disable SubscribeSubject ShapingStage => #8
            #7, #8 -> Disable Zip
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform WrongLickLimit => #10
              Expression: it.Item2 == 4 ? Convert.ToDouble(it.Item1.Punishment.Stage4PunishedLick) : it.Item2 == 5 ? Convert.ToDouble(it.Item1.Punishment.Stage5PunishedLick) : it.Item2 == 6 ? Convert.ToDouble(it.Item1.Punishment.Stage6PunishedLick) : Convert.ToDouble(1000)
            #6, #10 -> Disable WithLatestFrom
            -> Disable Bonsai.Scripting.Expressions.ExpressionTransform LicksAboveLimit
              Expression: (it.Item1 >= it.Item2)
            -> Disable WorkflowOutput
        #9, #12, #15, #17 -> Merge
        -> WorkflowOutput
    #26, #27 -> TakeUntil => #28
    SubscribeSubject StartFreqV => #29
    SubscribeSubject EndFreqV => #30
    #11, #29, #30 -> Zip => #31
    #10, #31 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform "cm to SpatFreq" => #33
      Expression: it.Item2.Item2*Math.Pow(it.Item2.Item3/it.Item2.Item2, Math.Max(0, Math.Min(1, it.Item1 /it.Item2.Item1)))
    -> Condition IsTrial1
        SubscribeSubject ShapingStage
        -> Take(Count=1)
        -> Equal(Operand=IntProperty(Value=1)) => #2
        Source2=#2 -> WorkflowOutput
    -> GroupWorkflow AddFreqDriftV => #35
        WorkflowInput Source1 => #0
        SubscribeSubject StartFreqV => #1
        -> PropertyMapping(Value) => #2
        #0, #2 -> Subtract(Operand=DoubleProperty(Value=4))
        -> Bonsai.Scripting.Expressions.ExpressionTransform FreqFromMoving => #4
          Expression: it
        SubscribeSubject BeepTimer => #5
        SubscribeSubject EndFreqV => #6
        SubscribeSubject DriftBeepsTillEnd => #7
        #1, #6, #7 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform Multiplier => #9
          Expression: Math.Pow(it.Item2 / it.Item1, 1.0 / it.Item3)
        #5, #9 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform Multiplier^n-steps => #11
          Expression: Math.Pow(it.Item2, it.Item1)
        SubscribeSubject StartFreqV => #12
        #11, #12 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform "geometric drift"
          Expression: it.item2 * it.Item1
        -> PropertyMapping(Value) => #15
        #4, #15 -> Add(Operand=DoubleProperty(Value=4.8299223659460173))
        -> WorkflowOutput
    #33 -> Condition IsNotTrial1 => #36
        SubscribeSubject ShapingStage
        -> Take(Count=1)
        -> NotEqual(Operand=IntProperty(Value=1)) => #2
        Source2=#2 -> WorkflowOutput
    #35, #36 -> Merge
    -> MulticastSubject CurrFreqV => #38
    SubscribeSubject BeepTimer => #39
    -> GroupWorkflow OpacityOnOff => #40
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform "Alternate On Off" => #1
          Expression: (it % 2 == 0) ? 0.0 : 1.0
        SubscribeSubject Opacity
        -> PropertyMapping(Value) => #3
        #1, #3 -> Multiply(Operand=DoubleProperty(Value=1))
        -> MulticastSubject CurrOpacity
        -> WorkflowOutput
    #39 -> GroupWorkflow RandomisePhase => #41
        WorkflowInput Source1
        -> Bonsai.Numerics.CreateRandom(Seed=nil)
        -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
        -> Bonsai.Numerics.Distributions.Sample
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: (it*360)-180
        -> MulticastSubject CurrPhase
        -> WorkflowOutput
    #38, #40, #41 -> Zip
    -> CreateObservable MakeGrating
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject settingsV

        Bonsai.Shaders.RenderFrame
        -> IncludeWorkflow(Path=BonVision:Environment.NormalizedView.bonsai) => #4
        SubscribeSubject settingsV => #5
        -> MemberSelector(Selector=Item1)
        -> PropertyMapping(SpatialFrequency) => #7
        #5 -> MemberSelector(Selector=Item2)
        -> PropertyMapping(Opacity) => #9
        #5 -> MemberSelector(Selector=Item3)
        -> PropertyMapping(Phase) => #11
        #4, #7, #9, #11 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawGratings.bonsai
          LocationX=0
          LocationY=0
          Layer=1
          ExtentX=2
          ExtentY=2
          SpatialFrequency=4.829922
          TemporalFrequency=0
          Phase=-4442.234
          Angle=90
          SquareWave=false
          Contrast=1
          DutyCycle=nil
          Radius=1
          Aperture=1
          Opacity=0
        -> WorkflowOutput
    -> Switch => #44
    #44, #27 -> TakeUntil => #45
    #28, #45 -> Zip
    -> MemberSelector(Selector=Item1)
    -> GroupWorkflow ProcessTrialEnd
        WorkflowInput Source1
        -> TakeLast(Count=1) => #1
        SubscribeSubject CurrFreq => #2
        #1, #2 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject TrialEndFreq => #5
        SubscribeSubject RewardFloorFreq => #6
        SubscribeSubject RewardCeilFreq => #7
        #6, #7 -> Zip => #8
        #5, #8 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform IsOnTarget
          Expression: ((it.Item1 >= it.Item2.Item1) && (it.Item1 <= it.Item2.Item2))
        -> BehaviorSubject WasOnTarget => #11
        -> Condition OnTarget
            WorkflowInput Source1
            -> WorkflowOutput
        -> SelectMany RewardTone => #13
            SubscribeSubject TaskParams
            -> MemberSelector(Selector=Amplitude) => #1
            -> PropertyMapping(Amplitude)
            -> Bonsai.Dsp.FunctionGenerator(BufferLength=500, Frequency=6000, Waveform=Sine, SampleRate=50000, Depth=F32, Amplitude=0.5, Offset=0, Phase=0)
            -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=0.05, RescaleType=Linear)
            -> Take(Count=25) => #5
            #1 -> PropertyMapping(Amplitude)
            -> Bonsai.Dsp.FunctionGenerator(BufferLength=500, Frequency=9000, Waveform=Sine, SampleRate=50000, Depth=F32, Amplitude=0.5, Offset=0, Phase=0)
            -> Bonsai.Dsp.Rescale(Min=0, Max=1, RangeMin=0, RangeMax=0.05, RescaleType=Linear)
            -> Take(Count=25) => #9
            #5, #9 -> Concat
            -> Bonsai.Dsp.Tile(RowTiles=32, ColumnTiles=1) => #11
            SubscribeSubject Mixer
            -> PropertyMapping(Mixer) => #13
            #11, #13 -> Bonsai.Mixer.QueueBuffer
            -> Disable Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on DELL S2722DC (5- HD Audio Driver for Display Audio)", SampleRate=50000, State=Playing)
            -> TakeLast(Count=1)
            -> BooleanProperty(Value=true)
            -> WorkflowOutput
        SubscribeSubject ShapingStage => #14
        #11 -> Condition OffTarget => #15
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #14, #15 -> SubscribeWhen
        -> Take(Count=1) => #17
        -> Condition IsStage4or5or6
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform Is4or5or6
              Expression: ((it >= 4) && (it <= 6))
            -> WorkflowOutput
        -> SelectMany PunishmentToneAndTimeout => #19
            SubscribeSubject Mixer
            -> PropertyMapping(Mixer) => #1
            Bonsai.Audio.AudioReader(FileName=waveforms\error_tone.wav, BufferLength=0, SampleRate=0) => #2
            DoubleProperty(Value=32767)
            -> Bonsai.Scripting.Expressions.ExpressionTransform "S16 to F32"
              Expression: 1/it
            -> PropertyMapping(Scale) => #5
            #2, #5 -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=3.0518509475997192E-05, Shift=0)
            -> Take(Count=1) => #7
            #1, #7 -> Bonsai.Mixer.QueueBuffer
            -> Bonsai.Audio.AudioPlayback(DeviceName="Generic Software on DELL S2722DC (5- HD Audio Driver for Display Audio)", SampleRate=50000, State=Playing)
            -> TakeLast(Count=1) => #10
            SubscribeSubject TaskParams
            -> MemberSelector(Selector=Punishment.TimeoutSec)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime)
            -> Timer(DueTime=PT5S) => #15
            #10, #15 -> Zip
            -> BooleanProperty(Value=false)
            -> WorkflowOutput
        #17 -> Condition IsNotStage4or5or6?
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform IsNot4or5or6
              Expression: (it < 4)
            -> WorkflowOutput
        -> BooleanProperty(Value=false) => #21
        Source1=#13, Source3=#19, Source4=#21 -> Merge
        -> MulticastSubject WasRewarded
        -> BooleanProperty(Value=true)
        -> MulticastSubject TrialEnded
        -> WorkflowOutput
    -> Repeat
    -> WorkflowOutput
Disable SubscribeSubject StartSession
-> Disable Skip(Count=1) => #82
Disable SubscribeSubject WaveformDict => #83
#82, #83 -> Disable Zip => #84
Disable SubscribeSubject WaveformDict => #85
#80, #84, #85 -> Disable SubscribeWhen
